// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[109], dend[56], axon[67]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 20 connect apic[i](0), apic[i-1](1)
  connect apic[21](0), apic[19](1)
  connect apic[22](0), apic[18](1)
  for i = 23, 24 connect apic[i](0), apic[22](1)
  connect apic[25](0), apic[17](1)
  connect apic[26](0), apic[16](1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  for i = 29, 30 connect apic[i](0), apic[28](1)
  connect apic[31](0), apic[15](1)
  for i = 32, 33 connect apic[i](0), apic[i-1](1)
  connect apic[34](0), apic[32](1)
  for i = 35, 36 connect apic[i](0), apic[34](1)
  connect apic[37](0), apic[31](1)
  connect apic[38](0), apic[14](1)
  connect apic[39](0), apic[13](1)
  for i = 40, 42 connect apic[i](0), apic[i-1](1)
  connect apic[43](0), apic[41](1)
  for i = 44, 45 connect apic[i](0), apic[43](1)
  connect apic[46](0), apic[40](1)
  connect apic[47](0), apic[39](1)
  for i = 48, 49 connect apic[i](0), apic[47](1)
  connect apic[50](0), apic[12](1)
  connect apic[51](0), apic[11](1)
  for i = 52, 53 connect apic[i](0), apic[i-1](1)
  connect apic[54](0), apic[52](1)
  connect apic[55](0), apic[51](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  connect apic[58](0), apic[10](1)
  connect apic[59](0), apic[9](1)
  for i = 60, 61 connect apic[i](0), apic[59](1)
  for i = 62, 63 connect apic[i](0), apic[61](1)
  for i = 64, 65 connect apic[i](0), apic[63](1)
  connect apic[66](0), apic[8](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect apic[69](0), apic[7](1)
  for i = 70, 71 connect apic[i](0), apic[69](1)
  for i = 72, 73 connect apic[i](0), apic[71](1)
  connect apic[74](0), apic[6](1)
  for i = 75, 76 connect apic[i](0), apic[74](1)
  connect apic[77](0), apic[5](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  for i = 80, 81 connect apic[i](0), apic[i-1](1)
  connect apic[82](0), apic[80](1)
  connect apic[83](0), apic[79](1)
  connect apic[84](0), apic[4](1)
  for i = 85, 86 connect apic[i](0), apic[84](1)
  for i = 87, 88 connect apic[i](0), apic[86](1)
  connect apic[89](0), apic[3](1)
  for i = 90, 91 connect apic[i](0), apic[89](1)
  for i = 92, 93 connect apic[i](0), apic[91](1)
  connect apic[94](0), apic[2](1)
  for i = 95, 96 connect apic[i](0), apic[94](1)
  for i = 97, 98 connect apic[i](0), apic[96](1)
  connect apic[99](0), apic[1](1)
  connect apic[100](0), apic(1)
  for i = 101, 102 connect apic[i](0), apic[100](1)
  for i = 103, 104 connect apic[i](0), apic[102](1)
  for i = 105, 106 connect apic[i](0), apic[104](1)
  for i = 107, 108 connect apic[i](0), apic[106](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  connect dend[8](0), dend[4](1)
  connect dend[9](0), dend[3](1)
  for i = 10, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  connect dend[14](0), dend(1)
  for i = 15, 16 connect dend[i](0), dend[i-1](1)
  connect dend[17](0), dend[15](1)
  connect dend[18](0), dend[14](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0.5)
  for i = 22, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[23](1)
  for i = 30, 31 connect dend[i](0), dend[i-1](1)
  connect dend[32](0), dend[30](1)
  connect dend[33](0), dend[29](1)
  connect dend[34](0), dend[22](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[21](1)
  connect dend[38](0), soma(0.5)
  for i = 39, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), dend[39](1)
  connect dend[46](0), dend[38](1)
  for i = 47, 48 connect dend[i](0), dend[46](1)
  connect dend[49](0), soma(0.5)
  for i = 50, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  connect axon(0), soma(0.5)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[i-1](1)
  connect axon[8](0), axon[6](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  for i = 11, 12 connect axon[i](0), axon[10](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  for i = 15, 16 connect axon[i](0), axon[14](1)
  for i = 17, 18 connect axon[i](0), axon[16](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  connect axon[21](0), axon[5](1)
  for i = 22, 23 connect axon[i](0), axon[21](1)
  for i = 24, 25 connect axon[i](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  connect axon[28](0), axon[2](1)
  for i = 29, 30 connect axon[i](0), axon[28](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  for i = 33, 34 connect axon[i](0), axon[32](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  connect axon[38](0), axon[34](1)
  connect axon[39](0), axon[1](1)
  for i = 40, 41 connect axon[i](0), axon[39](1)
  connect axon[42](0), axon(1)
  for i = 43, 44 connect axon[i](0), axon[i-1](1)
  connect axon[45](0), axon[43](1)
  for i = 46, 47 connect axon[i](0), axon[i-1](1)
  connect axon[48](0), axon[46](1)
  for i = 49, 50 connect axon[i](0), axon[i-1](1)
  connect axon[51](0), axon[49](1)
  for i = 52, 53 connect axon[i](0), axon[51](1)
  connect axon[54](0), axon[48](1)
  connect axon[55](0), axon[45](1)
  for i = 56, 57 connect axon[i](0), axon[55](1)
  connect axon[58](0), axon[42](1)
  for i = 59, 60 connect axon[i](0), axon[58](1)
  for i = 61, 62 connect axon[i](0), axon[60](1)
  for i = 63, 64 connect axon[i](0), axon[62](1)
  for i = 65, 66 connect axon[i](0), axon[64](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-12.496, 0, 0, 24.992)
	pt3dadd(0, 0, 0, 24.992)
	pt3dadd(12.496, 0, 0, 24.992)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-0.23, 18.88, -5.12, 4.3)
	pt3dadd(-0.24, 23.36, -4.67, 4)
	pt3dadd(2.62, 32.72, -2.8, 2.7)
	pt3dadd(3.32, 38.34, -3.66, 2.4)
	pt3dadd(3.45, 44.41, -4.05, 2)
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  }
}
proc shape3d_2() {
  apic[30] {	pt3dadd(-67.15, 476.45, 20.39, 0.4)
	pt3dadd(-70.26, 475.39, 20.85, 0.4)
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  }
}
proc shape3d_3() {
  apic[49] {  }
  apic[50] {pt3dclear()
	pt3dadd(-7, 268.04, -14.62, 1.1)
	pt3dadd(-4.47, 272.54, -14.3, 0.3)
	pt3dadd(-0.96, 280.65, -9.93, 0.3)
	pt3dadd(1.67, 299.33, -5.65, 0.3)
	pt3dadd(-2.59, 306.64, -3.5, 0.3)
	pt3dadd(0.5, 308.84, -0.29, 0.3)
	pt3dadd(2.5, 328.91, 5.05, 0.3)
	pt3dadd(5.62, 351.06, 9.75, 0.3)
	pt3dadd(14.62, 368.12, 15.31, 0.3)
	pt3dadd(20.04, 378.64, 20.71, 0.3)
	pt3dadd(27.28, 391.39, 24.05, 0.3)
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  }
}
proc shape3d_4() {
  apic[72] {	pt3dadd(49.83, 288.05, 2.74, 0.3)
	pt3dadd(56.52, 302.11, 3.09, 0.3)
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  }
}
proc shape3d_5() {
  apic[95] {	pt3dadd(-6.15, 144.14, -16.77, 0.3)
	pt3dadd(-1.3, 158.67, -21.2, 0.3)
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  }
}
proc shape3d_6() {
  dend[8] {	pt3dadd(-44.16, -46.89, -31.8, 0.3)
	pt3dadd(-46.83, -49.15, -34.45, 0.3)
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  }
}
proc shape3d_7() {
  dend[29] {	pt3dadd(9.82, -61.1, 6.08, 0.3)
  }
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  }
}
proc shape3d_8() {
  dend[51] {	pt3dadd(-3.95, -104.31, -59.65, 0.3)
	pt3dadd(-3.16, -109.59, -62.09, 0.3)
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  }
}
proc shape3d_9() {
  axon[20] {	pt3dadd(-274.63, -250.26, -33.88, 0.3)
  }
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  }
}
proc shape3d_10() {
  axon[49] {	pt3dadd(225.81, -164.22, -77.99, 0.3)
	pt3dadd(228.85, -163.85, -81.57, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 108 apic[i] all.append()
    for i=0, 55 dend[i] all.append()
    for i=0, 66 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 66 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 55 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 108 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 108

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}



load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







