// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[92], dend[39], axon[65]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 6 connect apic[i](0), apic[i-1](1)
  connect apic[7](0), apic[5](1)
  connect apic[8](0), apic[4](1)
  for i = 9, 10 connect apic[i](0), apic[8](1)
  connect apic[11](0), apic[3](1)
  connect apic[12](0), apic[2](1)
  for i = 13, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  connect apic[18](0), apic[12](1)
  connect apic[19](0), apic[1](1)
  connect apic[20](0), apic(1)
  for i = 21, 26 connect apic[i](0), apic[i-1](1)
  connect apic[27](0), apic[25](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  connect apic[30](0), apic[24](1)
  connect apic[31](0), apic[23](1)
  for i = 32, 33 connect apic[i](0), apic[31](1)
  connect apic[34](0), apic[22](1)
  for i = 35, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  connect apic[41](0), apic[37](1)
  connect apic[42](0), apic[36](1)
  connect apic[43](0), apic[35](1)
  connect apic[44](0), apic[34](1)
  connect apic[45](0), apic[21](1)
  for i = 46, 47 connect apic[i](0), apic[i-1](1)
  connect apic[48](0), apic[46](1)
  connect apic[49](0), apic[45](1)
  connect apic[50](0), apic[20](1)
  for i = 51, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  connect apic[56](0), apic[50](1)
  connect apic[57](0), soma(0.5)
  for i = 58, 66 connect apic[i](0), apic[i-1](1)
  connect apic[67](0), apic[65](1)
  connect apic[68](0), apic[64](1)
  connect apic[69](0), apic[63](1)
  connect apic[70](0), apic[62](1)
  connect apic[71](0), apic[61](1)
  connect apic[72](0), apic[60](1)
  for i = 73, 74 connect apic[i](0), apic[i-1](1)
  connect apic[75](0), apic[73](1)
  connect apic[76](0), apic[72](1)
  connect apic[77](0), apic[59](1)
  connect apic[78](0), apic[58](1)
  for i = 79, 81 connect apic[i](0), apic[i-1](1)
  connect apic[82](0), apic[80](1)
  connect apic[83](0), apic[79](1)
  connect apic[84](0), apic[78](1)
  for i = 85, 86 connect apic[i](0), apic[i-1](1)
  connect apic[87](0), apic[85](1)
  for i = 88, 89 connect apic[i](0), apic[87](1)
  connect apic[90](0), apic[84](1)
  connect apic[91](0), apic[57](1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  connect dend[10](0), dend(1)
  for i = 11, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  connect dend[24](0), dend[18](1)
  connect dend[25](0), dend[17](1)
  connect dend[26](0), soma(0.5)
  for i = 27, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  connect dend[33](0), dend[27](1)
  connect dend[34](0), dend[26](1)
  for i = 35, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  connect dend[38](0), dend[34](1)
  connect axon(0), soma(0.5)
  for i = 1, 5 connect axon[i](0), axon[i-1](1)
  connect axon[6](0), axon[4](1)
  connect axon[7](0), axon[3](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  connect axon[10](0), axon(1)
  for i = 11, 12 connect axon[i](0), axon[10](1)
  connect axon[13](0), axon[1](1)
  for i = 14, 16 connect axon[i](0), axon[i-1](1)
  connect axon[17](0), axon[15](1)
  for i = 18, 20 connect axon[i](0), axon[i-1](1)
  connect axon[21](0), axon[19](1)
  connect axon[22](0), axon[18](1)
  for i = 23, 24 connect axon[i](0), axon[22](1)
  connect axon[25](0), axon[17](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  connect axon[28](0), axon[14](1)
  for i = 29, 30 connect axon[i](0), axon[28](1)
  for i = 31, 33 connect axon[i](0), axon[i-1](1)
  connect axon[34](0), axon[32](1)
  connect axon[35](0), axon[31](1)
  connect axon[36](0), axon[30](1)
  for i = 37, 38 connect axon[i](0), axon[36](1)
  connect axon[39](0), axon[13](1)
  for i = 40, 41 connect axon[i](0), axon[i-1](1)
  connect axon[42](0), axon[40](1)
  for i = 43, 44 connect axon[i](0), axon[42](1)
  connect axon[45](0), axon[39](1)
  connect axon[46](0), axon[2](1)
  for i = 47, 52 connect axon[i](0), axon[i-1](1)
  connect axon[53](0), axon[51](1)
  connect axon[54](0), axon[50](1)
  connect axon[55](0), axon[49](1)
  connect axon[56](0), axon[48](1)
  for i = 57, 58 connect axon[i](0), axon[56](1)
  connect axon[59](0), axon[47](1)
  for i = 60, 61 connect axon[i](0), axon[59](1)
  for i = 62, 63 connect axon[i](0), axon[61](1)
  connect axon[64](0), axon[46](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-15.487, 0, 0, 30.974)
	pt3dadd(0, 0, 0, 30.974)
	pt3dadd(15.487, 0, 0, 30.974)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-8.81, 18.83, 5.22, 4.1)
	pt3dadd(-9.87, 22.72, 5.16, 4.1)
  }
  apic[1] {pt3dclear()
	pt3dadd(-9.87, 22.72, 5.16, 4.1)
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  }
}
proc shape3d_2() {
  apic[16] {	pt3dadd(-14.96, 232.88, 56.57, 0.3)
	pt3dadd(-13.85, 238.3, 59.42, 0.3)
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  }
}
proc shape3d_3() {
  apic[33] {	pt3dadd(-85.5, 195.06, -8.37, 0.3)
	pt3dadd(-88.99, 204.47, -7.64, 0.3)
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  }
}
proc shape3d_4() {
  apic[52] {	pt3dadd(-124.31, 115.8, 95.38, 0.3)
	pt3dadd(-130.01, 119.98, 96.14, 0.3)
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  }
}
proc shape3d_5() {
  apic[70] {	pt3dadd(69.96, 216.71, -39.13, 0.3)
	pt3dadd(76.27, 221.34, -42.59, 0.3)
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  }
}
proc shape3d_6() {
  apic[88] {	pt3dadd(-38.94, 256.96, -111.91, 0.3)
  }
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  }
}
proc shape3d_7() {
  dend[13] {	pt3dadd(-31.46, -210.39, -19.06, 0.3)
  }
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  }
}
proc shape3d_8() {
  dend[31] {  }
  dend[32] {pt3dclear()
	pt3dadd(103.3, -69.52, 27.11, 1.1)
	pt3dadd(105.31, -80.01, 28.15, 0.3)
	pt3dadd(111.28, -93.23, 28.71, 0.3)
	pt3dadd(115.8, -103.72, 31.14, 0.3)
	pt3dadd(120.85, -112.91, 33.7, 0.3)
	pt3dadd(127.27, -122.63, 35.94, 0.3)
	pt3dadd(136.2, -133.45, 39.04, 0.3)
	pt3dadd(139.44, -138.01, 40.93, 0.3)
	pt3dadd(144.72, -143.96, 40.57, 0.3)
	pt3dadd(148.75, -148.76, 41.56, 0.3)
	pt3dadd(151.44, -153.52, 43.87, 0.3)
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  }
}
proc shape3d_9() {
  axon[10] {	pt3dadd(18.38, -26.33, -42.41, 0.4)
	pt3dadd(9.61, -25.94, -36.66, 0.4)
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  }
}
proc shape3d_10() {
  axon[23] {	pt3dadd(338.25, -83.81, -46.07, 0.3)
	pt3dadd(340.23, -85.01, -41.75, 0.3)
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  }
}
proc shape3d_11() {
  axon[35] {	pt3dadd(-141.55, -255.03, -92.78, 0.3)
	pt3dadd(-143.6, -253.74, -93.56, 0.3)
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  }
}
proc shape3d_12() {
  axon[43] {	pt3dadd(205.52, -128.29, -52.41, 0.3)
	pt3dadd(209.73, -131.57, -56.41, 0.3)
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  }
}
proc shape3d_13() {
  axon[54] {	pt3dadd(252.71, 381.04, 155.69, 0.3)
	pt3dadd(249.44, 384.21, 160.84, 0.3)
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  }
}
proc shape3d_14() {
  axon[62] {	pt3dadd(-271.17, 43.45, 62.34, 0.3)
	pt3dadd(-275.47, 45.29, 57.18, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 91 apic[i] all.append()
    for i=0, 38 dend[i] all.append()
    for i=0, 64 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 64 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 38 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 91 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 91

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







