// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[102], dend[73], axon[53]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  connect apic[12](0), apic[8](1)
  for i = 13, 14 connect apic[i](0), apic[12](1)
  connect apic[15](0), apic[7](1)
  connect apic[16](0), apic[6](1)
  connect apic[17](0), apic[5](1)
  connect apic[18](0), apic[4](1)
  connect apic[19](0), apic[3](1)
  connect apic[20](0), apic[2](1)
  connect apic[21](0), apic[1](1)
  for i = 22, 25 connect apic[i](0), apic[i-1](1)
  connect apic[26](0), apic[24](1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  connect apic[29](0), apic[23](1)
  connect apic[30](0), apic[22](1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  connect apic[33](0), apic[21](1)
  connect apic[34](0), apic(1)
  for i = 35, 36 connect apic[i](0), apic[i-1](1)
  connect apic[37](0), apic[35](1)
  connect apic[38](0), apic[34](1)
  connect apic[39](0), soma(0.5)
  for i = 40, 49 connect apic[i](0), apic[i-1](1)
  connect apic[50](0), apic[48](1)
  connect apic[51](0), apic[47](1)
  for i = 52, 53 connect apic[i](0), apic[51](1)
  connect apic[54](0), apic[46](1)
  for i = 55, 56 connect apic[i](0), apic[i-1](1)
  connect apic[57](0), apic[55](1)
  connect apic[58](0), apic[54](1)
  connect apic[59](0), apic[45](1)
  connect apic[60](0), apic[44](1)
  connect apic[61](0), apic[43](1)
  connect apic[62](0), apic[42](1)
  connect apic[63](0), apic[41](1)
  connect apic[64](0), apic[40](1)
  for i = 65, 66 connect apic[i](0), apic[64](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect apic[69](0), apic[39](1)
  for i = 70, 81 connect apic[i](0), apic[i-1](1)
  connect apic[82](0), apic[80](1)
  connect apic[83](0), apic[79](1)
  connect apic[84](0), apic[78](1)
  connect apic[85](0), apic[77](1)
  for i = 86, 87 connect apic[i](0), apic[i-1](1)
  connect apic[88](0), apic[86](1)
  connect apic[89](0), apic[85](1)
  connect apic[90](0), apic[76](1)
  connect apic[91](0), apic[75](1)
  connect apic[92](0), apic[74](1)
  connect apic[93](0), apic[73](1)
  connect apic[94](0), apic[72](1)
  connect apic[95](0), apic[71](1)
  connect apic[96](0), apic[70](1)
  connect apic[97](0), apic[69](1)
  for i = 98, 99 connect apic[i](0), apic[i-1](1)
  connect apic[100](0), apic[98](1)
  connect apic[101](0), apic[97](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  connect dend[10](0), dend(1)
  for i = 11, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  connect dend[28](0), dend[20](1)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  connect dend[33](0), dend[19](1)
  for i = 34, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  connect dend[40](0), dend[34](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  connect dend[43](0), dend[33](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  connect dend[50](0), soma(0.5)
  for i = 51, 54 connect dend[i](0), dend[i-1](1)
  connect dend[55](0), dend[53](1)
  connect dend[56](0), dend[52](1)
  connect dend[57](0), dend[51](1)
  for i = 58, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  connect dend[62](0), dend[50](1)
  for i = 63, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  connect dend[67](0), dend[63](1)
  connect dend[68](0), dend[62](1)
  for i = 69, 70 connect dend[i](0), dend[i-1](1)
  connect dend[71](0), dend[69](1)
  connect dend[72](0), dend[68](1)
  connect axon(0), soma(0.5)
  for i = 1, 6 connect axon[i](0), axon[i-1](1)
  connect axon[7](0), axon[5](1)
  connect axon[8](0), axon[4](1)
  connect axon[9](0), axon[3](1)
  for i = 10, 11 connect axon[i](0), axon[9](1)
  connect axon[12](0), axon[2](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  for i = 15, 16 connect axon[i](0), axon[14](1)
  connect axon[17](0), axon[1](1)
  for i = 18, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  connect axon[21](0), axon[17](1)
  connect axon[22](0), axon(1)
  for i = 23, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  for i = 28, 29 connect axon[i](0), axon[27](1)
  for i = 30, 31 connect axon[i](0), axon[i-1](1)
  connect axon[32](0), axon[30](1)
  for i = 33, 34 connect axon[i](0), axon[i-1](1)
  connect axon[35](0), axon[33](1)
  connect axon[36](0), axon[32](1)
  connect axon[37](0), axon[29](1)
  connect axon[38](0), axon[22](1)
  for i = 39, 40 connect axon[i](0), axon[38](1)
  for i = 41, 42 connect axon[i](0), axon[i-1](1)
  connect axon[43](0), axon[41](1)
  connect axon[44](0), axon[40](1)
  for i = 45, 48 connect axon[i](0), axon[i-1](1)
  connect axon[49](0), axon[47](1)
  connect axon[50](0), axon[46](1)
  connect axon[51](0), axon[45](1)
  connect axon[52](0), axon[44](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-15.735, 0, 0, 31.47)
	pt3dadd(0, 0, 0, 31.47)
	pt3dadd(15.735, 0, 0, 31.47)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-3.53, 25.36, 4.45, 3.1)
	pt3dadd(-2.81, 31.94, 7.84, 3.1)
	pt3dadd(-0.4, 36.11, 10.3, 2.2)
	pt3dadd(-0.7, 40.15, 13.81, 2.1)
  }
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  }
}
proc shape3d_2() {
  apic[28] {	pt3dadd(-86.09, 429.9, 17.93, 0.3)
	pt3dadd(-95.17, 434.77, 19.78, 0.3)
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  }
}
proc shape3d_3() {
  apic[52] {	pt3dadd(90.55, 487.69, -75.86, 0.3)
	pt3dadd(93.25, 499.76, -79.13, 0.3)
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  }
}
proc shape3d_4() {
  apic[81] {	pt3dadd(-5.89, 551.06, -39.36, 0.3)
	pt3dadd(-13.73, 561.23, -35.81, 0.3)
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  }
}
proc shape3d_5() {
  apic[99] {	pt3dadd(-0.34, 173.02, -45.74, 0.3)
	pt3dadd(0.62, 187.64, -45.54, 0.3)
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  }
}
proc shape3d_6() {
  dend[22] {	pt3dadd(-139.06, -113.48, -42.93, 0.5)
	pt3dadd(-142.13, -125.81, -48.3, 0.5)
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  }
}
proc shape3d_7() {
  dend[46] {  }
  dend[47] {pt3dclear()
	pt3dadd(-3.58, -99.3, 7.2, 0.3)
	pt3dadd(-0.55, -104.04, 8.29, 0.3)
  }
  dend[48] {pt3dclear()
	pt3dadd(-0.55, -104.04, 8.29, 0.3)
	pt3dadd(1.06, -121.89, 5.85, 0.3)
	pt3dadd(3.64, -132.01, 5.85, 0.3)
	pt3dadd(3.53, -143.89, 4.14, 0.3)
	pt3dadd(6.87, -161.18, 1.2, 0.3)
	pt3dadd(8.99, -177.2, 0.04, 0.3)
	pt3dadd(9.87, -194.6, -5.47, 0.3)
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  }
}
proc shape3d_8() {
  axon {	pt3dadd(3.83, -46.43, -41.12, 0.5)
	pt3dadd(6.16, -50.35, -45.58, 0.5)
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  }
}
proc shape3d_9() {
  axon[8] {	pt3dadd(432.77, 223.01, 446.97, 0.3)
	pt3dadd(433.55, 217.01, 449.96, 0.3)
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  }
}
proc shape3d_10() {
  axon[15] {	pt3dadd(-454.27, -48.7, -288.64, 0.3)
	pt3dadd(-457.96, -49.02, -289.66, 0.3)
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  }
}
proc shape3d_11() {
  axon[27] {	pt3dadd(55.35, -99.13, 5.55, 0.3)
	pt3dadd(63.55, -104.13, 8.11, 0.3)
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  }
}
proc shape3d_12() {
  axon[34] {	pt3dadd(588.91, -36.74, 184.98, 0.3)
	pt3dadd(596.37, -41.28, 184.45, 0.3)
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  }
}
proc shape3d_13() {
  axon[48] {	pt3dadd(-191.12, -124.96, -506.1, 0.3)
	pt3dadd(-192.02, -121.83, -510.22, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 101 apic[i] all.append()
    for i=0, 72 dend[i] all.append()
    for i=0, 52 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 52 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 72 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 101 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 101

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







