// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[118], dend[94], axon[41]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  connect apic[18](0), apic[12](1)
  connect apic[19](0), apic[11](1)
  connect apic[20](0), apic[10](1)
  for i = 21, 23 connect apic[i](0), apic[i-1](1)
  connect apic[24](0), apic[22](1)
  connect apic[25](0), apic[21](1)
  for i = 26, 27 connect apic[i](0), apic[25](1)
  connect apic[28](0), apic[20](1)
  connect apic[29](0), apic[9](1)
  connect apic[30](0), apic[8](1)
  connect apic[31](0), apic[7](1)
  for i = 32, 33 connect apic[i](0), apic[31](1)
  connect apic[34](0), apic[6](1)
  for i = 35, 36 connect apic[i](0), apic[34](1)
  connect apic[37](0), apic[5](1)
  connect apic[38](0), apic[4](1)
  for i = 39, 40 connect apic[i](0), apic[38](1)
  connect apic[41](0), apic[3](1)
  connect apic[42](0), apic[2](1)
  connect apic[43](0), apic[1](1)
  for i = 44, 45 connect apic[i](0), apic[43](1)
  for i = 46, 47 connect apic[i](0), apic[45](1)
  for i = 48, 49 connect apic[i](0), apic[47](1)
  connect apic[50](0), apic(1)
  for i = 51, 58 connect apic[i](0), apic[i-1](1)
  connect apic[59](0), apic[57](1)
  connect apic[60](0), apic[56](1)
  connect apic[61](0), apic[55](1)
  connect apic[62](0), apic[54](1)
  connect apic[63](0), apic[53](1)
  connect apic[64](0), apic[52](1)
  for i = 65, 66 connect apic[i](0), apic[i-1](1)
  connect apic[67](0), apic[65](1)
  connect apic[68](0), apic[64](1)
  connect apic[69](0), apic[51](1)
  connect apic[70](0), apic[50](1)
  for i = 71, 73 connect apic[i](0), apic[i-1](1)
  connect apic[74](0), apic[72](1)
  connect apic[75](0), apic[71](1)
  connect apic[76](0), apic[70](1)
  connect apic[77](0), soma(0.5)
  for i = 78, 88 connect apic[i](0), apic[i-1](1)
  connect apic[89](0), apic[87](1)
  connect apic[90](0), apic[86](1)
  connect apic[91](0), apic[85](1)
  connect apic[92](0), apic[84](1)
  connect apic[93](0), apic[83](1)
  for i = 94, 95 connect apic[i](0), apic[i-1](1)
  connect apic[96](0), apic[94](1)
  connect apic[97](0), apic[93](1)
  connect apic[98](0), apic[82](1)
  connect apic[99](0), apic[81](1)
  connect apic[100](0), apic[80](1)
  for i = 101, 102 connect apic[i](0), apic[i-1](1)
  connect apic[103](0), apic[101](1)
  for i = 104, 105 connect apic[i](0), apic[103](1)
  connect apic[106](0), apic[79](1)
  connect apic[107](0), apic[78](1)
  connect apic[108](0), apic[77](1)
  for i = 109, 110 connect apic[i](0), apic[i-1](1)
  connect apic[111](0), apic[109](1)
  connect apic[112](0), apic[108](1)
  for i = 113, 114 connect apic[i](0), apic[112](1)
  connect apic[115](0), apic[100](1)
  for i = 116, 117 connect apic[i](0), apic[115](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(1)
  for i = 13, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  connect dend[18](0), dend[12](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  connect dend[23](0), dend[19](1)
  for i = 24, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  connect dend[28](0), dend[24](1)
  connect dend[29](0), dend[23](1)
  connect dend[30](0), soma(0.5)
  for i = 31, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  connect dend[38](0), dend[34](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[33](1)
  connect dend[42](0), dend[32](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  connect dend[47](0), dend[31](1)
  for i = 48, 50 connect dend[i](0), dend[i-1](1)
  connect dend[51](0), dend[49](1)
  connect dend[52](0), dend[48](1)
  connect dend[53](0), dend[47](1)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  connect dend[60](0), dend[30](1)
  for i = 61, 64 connect dend[i](0), dend[i-1](1)
  connect dend[65](0), dend[63](1)
  connect dend[66](0), dend[62](1)
  connect dend[67](0), dend[61](1)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  connect dend[70](0), dend[60](1)
  for i = 71, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), dend[70](1)
  connect dend[77](0), soma(0.5)
  for i = 78, 79 connect dend[i](0), dend[i-1](1)
  connect dend[80](0), dend[78](1)
  connect dend[81](0), dend[77](1)
  for i = 82, 83 connect dend[i](0), dend[i-1](1)
  connect dend[84](0), dend[82](1)
  connect dend[85](0), dend[81](1)
  for i = 86, 87 connect dend[i](0), dend[i-1](1)
  connect dend[88](0), dend[86](1)
  for i = 89, 90 connect dend[i](0), dend[88](1)
  connect dend[91](0), dend[85](1)
  for i = 92, 93 connect dend[i](0), dend[91](1)
  connect axon(0), soma(0.5)
  for i = 1, 6 connect axon[i](0), axon[i-1](1)
  connect axon[7](0), axon[5](1)
  connect axon[8](0), axon[4](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  connect axon[11](0), axon[3](1)
  for i = 12, 13 connect axon[i](0), axon[i-1](1)
  connect axon[14](0), axon[12](1)
  for i = 15, 16 connect axon[i](0), axon[14](1)
  connect axon[17](0), axon[11](1)
  connect axon[18](0), axon[2](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  connect axon[21](0), axon[1](1)
  for i = 22, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  connect axon[28](0), axon[22](1)
  connect axon[29](0), axon[21](1)
  connect axon[30](0), axon(1)
  for i = 31, 32 connect axon[i](0), axon[i-1](1)
  connect axon[33](0), axon[31](1)
  connect axon[34](0), axon[30](1)
  for i = 35, 36 connect axon[i](0), axon[34](1)
  for i = 37, 38 connect axon[i](0), axon[i-1](1)
  connect axon[39](0), axon[37](1)
  connect axon[40](0), axon[36](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-16.634, 0, 0, 33.268)
	pt3dadd(0, 0, 0, 33.268)
	pt3dadd(16.634, 0, 0, 33.268)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(0.24, -18.54, 0.86, 5.7)
	pt3dadd(1.39, -28.02, 0.6, 5)
	pt3dadd(0.27, -39.45, -3.08, 3.8)
  }
  apic[1] {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[27] {	pt3dadd(235.05, -556.99, 98.45, 0.3)
	pt3dadd(232.27, -570.63, 103.81, 0.3)
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  }
}
proc shape3d_3() {
  apic[59] {	pt3dadd(40.34, -377.53, -73.16, 0.3)
	pt3dadd(39.75, -387.67, -81.36, 0.3)
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  }
}
proc shape3d_4() {
  apic[89] {	pt3dadd(140.27, -626.86, 111.07, 0.3)
	pt3dadd(139.18, -633.27, 110.98, 0.3)
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  }
}
proc shape3d_5() {
  apic[110] {	pt3dadd(-14.87, -64, 14.15, 0.3)
  }
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  }
}
proc shape3d_6() {
  dend[13] {	pt3dadd(-28.12, 8.04, 9.29, 0.5)
  }
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  }
}
proc shape3d_7() {
  dend[29] {	pt3dadd(-60.49, 80.8, 5.36, 0.4)
	pt3dadd(-69.6, 86.92, 5.42, 0.4)
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  }
}
proc shape3d_8() {
  dend[47] {  }
  dend[48] {pt3dclear()
	pt3dadd(0.88, 30.73, 5.36, 0.3)
	pt3dadd(4.01, 35.02, 5.8, 0.3)
	pt3dadd(5.48, 35.79, 8.25, 0.3)
  }
  dend[49] {pt3dclear()
	pt3dadd(5.48, 35.79, 8.25, 0.3)
	pt3dadd(10.44, 41.47, 10.63, 0.3)
	pt3dadd(15.86, 47.28, 12.5, 0.3)
	pt3dadd(20.39, 52.38, 13.89, 0.3)
	pt3dadd(30.53, 64.4, 15.65, 0.3)
	pt3dadd(34.9, 74.61, 16.66, 0.3)
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  }
}
proc shape3d_9() {
  dend[64] {  }
  dend[65] {pt3dclear()
	pt3dadd(43.62, 152.77, -5.65, 0.3)
	pt3dadd(42, 157.54, -5.97, 0.3)
	pt3dadd(44.02, 164.63, -4.42, 0.3)
	pt3dadd(45.44, 174.17, -3.79, 0.3)
	pt3dadd(45.82, 188.55, -1.5, 0.3)
	pt3dadd(47.62, 205.37, -0.73, 0.3)
	pt3dadd(50.33, 218.72, 2.41, 0.3)
	pt3dadd(50.2, 228.4, 3.62, 0.3)
	pt3dadd(45.55, 237.57, 4.53, 0.3)
	pt3dadd(44.66, 246.5, 7.77, 0.3)
	pt3dadd(46.08, 256.04, 8.4, 0.3)
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  }
}
proc shape3d_10() {
  dend[83] {	pt3dadd(102.03, 153.44, -40.99, 0.3)
	pt3dadd(101.42, 162.13, -44.28, 0.3)
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  }
}
proc shape3d_11() {
  axon[8] {	pt3dadd(-48.68, -160.71, -12.77, 0.3)
	pt3dadd(-56.83, -162.68, -9.92, 0.3)
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  }
}
proc shape3d_12() {
  axon[13] {	pt3dadd(383.37, -363.32, 1.24, 0.3)
	pt3dadd(389.13, -371.13, -2.2, 0.3)
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  }
}
proc shape3d_13() {
  axon[20] {	pt3dadd(141.8, 145.33, -31.56, 0.3)
	pt3dadd(140.79, 149.27, -33.93, 0.3)
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  }
}
proc shape3d_14() {
  axon[28] {	pt3dadd(193.18, -269.69, 10.35, 0.3)
	pt3dadd(197.95, -272.24, 12.07, 0.3)
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  }
}
proc shape3d_15() {
  axon[37] {	pt3dadd(211.25, 171.66, 28.23, 0.3)
	pt3dadd(216.83, 171.04, 23.44, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 117 apic[i] all.append()
    for i=0, 93 dend[i] all.append()
    for i=0, 40 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 40 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 93 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 117 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 117

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







