// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[69], dend[63], axon[87]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[3](1)
  connect apic[6](0), apic[2](1)
  connect apic[7](0), apic[1](1)
  for i = 8, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  connect apic[11](0), apic[7](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  connect apic[15](0), apic[11](1)
  connect apic[16](0), apic(1)
  for i = 17, 20 connect apic[i](0), apic[i-1](1)
  connect apic[21](0), apic[19](1)
  connect apic[22](0), apic[18](1)
  connect apic[23](0), apic[17](1)
  connect apic[24](0), apic[16](1)
  connect apic[25](0), soma(0.5)
  for i = 26, 29 connect apic[i](0), apic[i-1](1)
  connect apic[30](0), apic[28](1)
  connect apic[31](0), apic[27](1)
  connect apic[32](0), apic[26](1)
  connect apic[33](0), apic[25](1)
  for i = 34, 37 connect apic[i](0), apic[i-1](1)
  connect apic[38](0), apic[36](1)
  connect apic[39](0), apic[35](1)
  connect apic[40](0), apic[34](1)
  connect apic[41](0), apic[33](1)
  connect apic[42](0), soma(0.5)
  for i = 43, 49 connect apic[i](0), apic[i-1](1)
  connect apic[50](0), apic[48](1)
  for i = 51, 52 connect apic[i](0), apic[50](1)
  connect apic[53](0), apic[47](1)
  connect apic[54](0), apic[46](1)
  connect apic[55](0), apic[45](1)
  connect apic[56](0), apic[44](1)
  for i = 57, 58 connect apic[i](0), apic[i-1](1)
  connect apic[59](0), apic[57](1)
  for i = 60, 61 connect apic[i](0), apic[59](1)
  connect apic[62](0), apic[56](1)
  connect apic[63](0), apic[43](1)
  for i = 64, 65 connect apic[i](0), apic[63](1)
  connect apic[66](0), apic[42](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  connect dend[10](0), dend(1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), soma(0.5)
  for i = 14, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  connect dend[24](0), dend[16](1)
  for i = 25, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  connect dend[28](0), dend[24](1)
  connect dend[29](0), dend[15](1)
  for i = 30, 31 connect dend[i](0), dend[i-1](1)
  connect dend[32](0), dend[30](1)
  connect dend[33](0), dend[29](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), dend[14](1)
  for i = 37, 38 connect dend[i](0), dend[36](1)
  connect dend[39](0), dend[13](1)
  for i = 40, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  connect dend[43](0), dend[39](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  connect dend[46](0), soma(0.5)
  for i = 47, 50 connect dend[i](0), dend[i-1](1)
  connect dend[51](0), dend[49](1)
  connect dend[52](0), dend[48](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  connect dend[55](0), dend[47](1)
  for i = 56, 57 connect dend[i](0), dend[i-1](1)
  connect dend[58](0), dend[56](1)
  connect dend[59](0), dend[55](1)
  connect dend[60](0), dend[46](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  connect axon(0), soma(0.5)
  for i = 1, 10 connect axon[i](0), axon[i-1](1)
  connect axon[11](0), axon[9](1)
  connect axon[12](0), axon[8](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  connect axon[15](0), axon(1)
  for i = 16, 18 connect axon[i](0), axon[i-1](1)
  connect axon[19](0), axon[17](1)
  connect axon[20](0), axon[16](1)
  for i = 21, 22 connect axon[i](0), axon[20](1)
  for i = 23, 25 connect axon[i](0), axon[i-1](1)
  connect axon[26](0), axon[24](1)
  for i = 27, 28 connect axon[i](0), axon[26](1)
  connect axon[29](0), axon[23](1)
  connect axon[30](0), axon[22](1)
  connect axon[31](0), axon[15](1)
  for i = 32, 33 connect axon[i](0), axon[i-1](1)
  connect axon[34](0), axon[32](1)
  connect axon[35](0), axon[31](1)
  for i = 36, 37 connect axon[i](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[i-1](1)
  connect axon[40](0), axon[38](1)
  connect axon[41](0), axon[37](1)
  for i = 42, 43 connect axon[i](0), axon[i-41](1)
  for i = 44, 45 connect axon[i](0), axon[43](1)
  for i = 46, 47 connect axon[i](0), axon[45](1)
  for i = 48, 49 connect axon[i](0), axon[i-1](1)
  connect axon[50](0), axon[48](1)
  for i = 51, 52 connect axon[i](0), axon[50](1)
  connect axon[53](0), axon[47](1)
  for i = 54, 55 connect axon[i](0), axon[53](1)
  connect axon[56](0), axon[3](1)
  for i = 57, 59 connect axon[i](0), axon[i-1](1)
  connect axon[60](0), axon[58](1)
  for i = 61, 62 connect axon[i](0), axon[60](1)
  connect axon[63](0), axon[57](1)
  connect axon[64](0), axon[56](1)
  for i = 65, 66 connect axon[i](0), axon[64](1)
  for i = 67, 68 connect axon[i](0), axon[66](1)
  connect axon[69](0), axon[5](1)
  for i = 70, 71 connect axon[i](0), axon[69](1)
  for i = 72, 73 connect axon[i](0), axon[71](1)
  for i = 74, 75 connect axon[i](0), axon[i-68](1)
  for i = 76, 77 connect axon[i](0), axon[75](1)
  for i = 78, 79 connect axon[i](0), axon[77](1)
  connect axon[80](0), axon[4](1)
  for i = 81, 82 connect axon[i](0), axon[i-1](1)
  connect axon[83](0), axon[81](1)
  connect axon[84](0), axon[80](1)
  for i = 85, 86 connect axon[i](0), axon[84](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-20.163, 0, 0, 40.326)
	pt3dadd(0, 0, 0, 40.326)
	pt3dadd(20.163, 0, 0, 40.326)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(9.84, 14.4, -4.18, 3.2)
	pt3dadd(20.27, 18.02, -7.87, 2.5)
	pt3dadd(28.61, 21.29, -10.55, 2)
	pt3dadd(31.68, 22.22, -10.6, 2)
	pt3dadd(39.99, 33.35, -14.53, 2)
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  }
}
proc shape3d_2() {
  apic[20] {	pt3dadd(320.13, 356.3, 4.12, 0.3)
	pt3dadd(324.75, 360.37, 3.45, 0.3)
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  }
}
proc shape3d_3() {
  apic[39] {	pt3dadd(62.36, 158.32, 5.11, 0.3)
	pt3dadd(58.62, 178.52, 5.96, 0.3)
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  }
}
proc shape3d_4() {
  apic[61] {	pt3dadd(89.58, 243.67, -82.49, 0.3)
	pt3dadd(87.84, 252.44, -90.78, 0.3)
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  }
}
proc shape3d_5() {
  dend[11] {	pt3dadd(53.87, -110.99, 14.72, 0.3)
	pt3dadd(57.47, -119.11, 9.96, 0.3)
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  }
}
proc shape3d_6() {
  dend[34] {	pt3dadd(-75.75, -183.96, -15.91, 0.3)
	pt3dadd(-79.08, -193.28, -18.08, 0.3)
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  }
}
proc shape3d_7() {
  dend[58] {	pt3dadd(-74.8, -69.28, -46.79, 0.3)
	pt3dadd(-81.6, -75.83, -54.52, 0.3)
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  }
}
proc shape3d_8() {
  axon[7] {	pt3dadd(-480.05, 236.57, -72.68, 0.3)
	pt3dadd(-483.5, 237.75, -72.19, 0.3)
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  }
}
proc shape3d_9() {
  axon[17] {	pt3dadd(72.65, 160.37, -57.56, 0.3)
	pt3dadd(77.58, 164.95, -55.75, 0.3)
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  }
}
proc shape3d_10() {
  axon[25] {	pt3dadd(-143.8, 371.58, 53.45, 0.3)
	pt3dadd(-144.87, 373.6, 55.39, 0.3)
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  }
}
proc shape3d_11() {
  axon[31] {	pt3dadd(132.37, -0.21, -26.57, 0.3)
	pt3dadd(140.92, -1.99, -30.58, 0.3)
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  }
}
proc shape3d_12() {
  axon[38] {	pt3dadd(199.61, 226.56, 1.34, 0.3)
	pt3dadd(198.68, 227.93, 4.8, 0.3)
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  }
}
proc shape3d_13() {
  axon[41] {	pt3dadd(-127.55, 486.51, -13.05, 0.3)
	pt3dadd(-130.58, 487.45, -11.06, 0.3)
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  }
}
proc shape3d_14() {
  axon[46] {	pt3dadd(-307.22, 30.74, -144.54, 0.3)
	pt3dadd(-304.76, 27.3, -142.94, 0.3)
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  }
}
proc shape3d_15() {
  axon[55] {	pt3dadd(-581.01, 303.99, -43.7, 0.3)
	pt3dadd(-581.1, 306.56, -41.78, 0.3)
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  }
}
proc shape3d_16() {
  axon[61] {	pt3dadd(-154.55, 431.31, -163.09, 0.3)
	pt3dadd(-146.49, 426.12, -169.98, 0.3)
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  }
}
proc shape3d_17() {
  axon[74] {	pt3dadd(-401.61, 231.92, -134.12, 0.3)
	pt3dadd(-402.57, 233.16, -134.65, 0.3)
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  }
}
proc shape3d_18() {
  axon[84] {	pt3dadd(275.04, -329.17, -83.08, 0.3)
	pt3dadd(287.47, -333.97, -80.51, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 68 apic[i] all.append()
    for i=0, 62 dend[i] all.append()
    for i=0, 86 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 86 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 62 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 68 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 68

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







