// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[85], dend[91], axon[55]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  connect apic[12](0), apic[8](1)
  connect apic[13](0), apic[7](1)
  connect apic[14](0), apic[6](1)
  for i = 15, 16 connect apic[i](0), apic[14](1)
  connect apic[17](0), apic[5](1)
  for i = 18, 19 connect apic[i](0), apic[17](1)
  connect apic[20](0), apic[4](1)
  for i = 21, 22 connect apic[i](0), apic[20](1)
  connect apic[23](0), apic[3](1)
  for i = 24, 27 connect apic[i](0), apic[i-1](1)
  connect apic[28](0), apic[26](1)
  for i = 29, 30 connect apic[i](0), apic[i-1](1)
  connect apic[31](0), apic[29](1)
  connect apic[32](0), apic[28](1)
  connect apic[33](0), apic[25](1)
  connect apic[34](0), apic[24](1)
  connect apic[35](0), apic[23](1)
  connect apic[36](0), apic[2](1)
  connect apic[37](0), apic[1](1)
  for i = 38, 43 connect apic[i](0), apic[i-1](1)
  connect apic[44](0), apic[42](1)
  connect apic[45](0), apic[41](1)
  for i = 46, 47 connect apic[i](0), apic[i-1](1)
  connect apic[48](0), apic[46](1)
  connect apic[49](0), apic[45](1)
  for i = 50, 51 connect apic[i](0), apic[49](1)
  connect apic[52](0), apic[40](1)
  connect apic[53](0), apic[39](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  connect apic[56](0), apic[38](1)
  connect apic[57](0), apic[37](1)
  for i = 58, 63 connect apic[i](0), apic[i-1](1)
  connect apic[64](0), apic[62](1)
  connect apic[65](0), apic[61](1)
  for i = 66, 67 connect apic[i](0), apic[65](1)
  connect apic[68](0), apic[60](1)
  connect apic[69](0), apic[59](1)
  connect apic[70](0), apic[58](1)
  connect apic[71](0), apic[57](1)
  connect apic[72](0), apic(1)
  for i = 73, 76 connect apic[i](0), apic[i-1](1)
  connect apic[77](0), apic[75](1)
  connect apic[78](0), apic[74](1)
  connect apic[79](0), apic[73](1)
  connect apic[80](0), apic[72](1)
  for i = 81, 82 connect apic[i](0), apic[i-1](1)
  connect apic[83](0), apic[81](1)
  connect apic[84](0), apic[80](1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  connect dend[7](0), dend[1](1)
  connect dend[8](0), dend(1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect dend[11](0), soma(0.5)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), soma(0.5)
  for i = 17, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  for i = 23, 24 connect dend[i](0), dend[22](1)
  connect dend[25](0), dend[19](1)
  connect dend[26](0), dend[18](1)
  connect dend[27](0), dend[17](1)
  connect dend[28](0), dend[16](1)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  for i = 32, 33 connect dend[i](0), dend[31](1)
  connect dend[34](0), dend[28](1)
  for i = 35, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  connect dend[40](0), dend[34](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  connect dend[43](0), soma(0.5)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  connect dend[54](0), soma(0.5)
  for i = 55, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  for i = 62, 63 connect dend[i](0), dend[61](1)
  connect dend[64](0), dend[56](1)
  for i = 65, 66 connect dend[i](0), dend[64](1)
  connect dend[67](0), dend[55](1)
  connect dend[68](0), dend[54](1)
  connect dend[69](0), soma(0.5)
  for i = 70, 73 connect dend[i](0), dend[i-1](1)
  connect dend[74](0), dend[72](1)
  connect dend[75](0), dend[71](1)
  for i = 76, 77 connect dend[i](0), dend[i-1](1)
  connect dend[78](0), dend[76](1)
  connect dend[79](0), dend[75](1)
  for i = 80, 81 connect dend[i](0), dend[79](1)
  connect dend[82](0), dend[70](1)
  for i = 83, 84 connect dend[i](0), dend[82](1)
  connect dend[85](0), dend[69](1)
  for i = 86, 87 connect dend[i](0), dend[i-1](1)
  connect dend[88](0), dend[86](1)
  connect dend[89](0), dend[85](1)
  connect dend[90](0), soma(0.5)
  connect axon(0), soma(0.5)
  for i = 1, 7 connect axon[i](0), axon[i-1](1)
  connect axon[8](0), axon[6](1)
  connect axon[9](0), axon[5](1)
  connect axon[10](0), axon[4](1)
  connect axon[11](0), axon(1)
  for i = 12, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  connect axon[21](0), axon[17](1)
  for i = 22, 23 connect axon[i](0), axon[21](1)
  connect axon[24](0), axon[16](1)
  for i = 25, 26 connect axon[i](0), axon[24](1)
  connect axon[27](0), axon[15](1)
  connect axon[28](0), axon[14](1)
  for i = 29, 30 connect axon[i](0), axon[i-17](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  connect axon[33](0), axon[3](1)
  for i = 34, 35 connect axon[i](0), axon[33](1)
  connect axon[36](0), axon[2](1)
  for i = 37, 40 connect axon[i](0), axon[i-1](1)
  connect axon[41](0), axon[39](1)
  connect axon[42](0), axon[38](1)
  connect axon[43](0), axon[37](1)
  connect axon[44](0), axon[36](1)
  connect axon[45](0), axon[1](1)
  for i = 46, 47 connect axon[i](0), axon[45](1)
  connect axon[48](0), axon[11](1)
  for i = 49, 50 connect axon[i](0), axon[i-1](1)
  connect axon[51](0), axon[49](1)
  for i = 52, 53 connect axon[i](0), axon[51](1)
  connect axon[54](0), axon[48](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-14.846, 0, 0, 29.692)
	pt3dadd(0, 0, 0, 29.692)
	pt3dadd(14.846, 0, 0, 29.692)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(19.2, -14.07, 1.52, 6.6)
	pt3dadd(28.57, -20.8, -0.08, 4.8)
  }
  apic[1] {pt3dclear()
	pt3dadd(28.57, -20.8, -0.08, 4.8)
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  }
}
proc shape3d_2() {
  apic[19] {	pt3dadd(184.94, -48.18, -30.21, 0.3)
	pt3dadd(192.47, -41.57, -32, 0.3)
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  }
}
proc shape3d_3() {
  apic[42] {	pt3dadd(333.53, -101.89, 83.51, 0.6)
	pt3dadd(345.73, -98.39, 87.71, 0.6)
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  }
}
proc shape3d_4() {
  apic[62] {	pt3dadd(368.85, -218.8, 60.9, 0.7)
	pt3dadd(374.93, -217.69, 67.72, 0.7)
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  }
}
proc shape3d_5() {
  apic[78] {	pt3dadd(185, -180.11, -80.73, 0.3)
	pt3dadd(190.15, -190.02, -84.21, 0.3)
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  }
}
proc shape3d_6() {
  dend[17] {	pt3dadd(-29.12, 7.36, -23.9, 0.9)
	pt3dadd(-37.47, 7.42, -29.22, 0.9)
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  }
}
proc shape3d_7() {
  dend[40] {	pt3dadd(-42.12, 25.55, -51.24, 0.3)
  }
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  }
}
proc shape3d_8() {
  dend[62] {  }
  dend[63] {pt3dclear()
	pt3dadd(-104.14, 77.74, -19.94, 0.3)
	pt3dadd(-110.63, 83.36, -23.31, 0.3)
	pt3dadd(-116.4, 86.52, -25.32, 0.3)
	pt3dadd(-120.06, 86.45, -28.97, 0.3)
	pt3dadd(-126.62, 90.4, -30.96, 0.3)
	pt3dadd(-131.61, 94.31, -32.38, 0.3)
  }
  dend[64] {pt3dclear()
	pt3dadd(-56.42, 34.16, 6.97, 1)
	pt3dadd(-67.66, 37.03, 11.76, 0.4)
	pt3dadd(-73.28, 37.67, 14.1, 0.6)
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  }
}
proc shape3d_9() {
  dend[85] {  }
  dend[86] {pt3dclear()
	pt3dadd(-47.39, 19.7, 30.9, 0.5)
	pt3dadd(-54.98, 22.42, 35.32, 0.3)
	pt3dadd(-62.55, 25.18, 39.23, 0.3)
  }
  dend[87] {pt3dclear()
	pt3dadd(-62.55, 25.18, 39.23, 0.3)
	pt3dadd(-69.52, 29.77, 44.3, 0.3)
	pt3dadd(-74.62, 35.25, 49.99, 0.3)
	pt3dadd(-78.55, 41, 54.25, 0.3)
	pt3dadd(-83.25, 44.41, 57.81, 0.3)
	pt3dadd(-86.18, 49.93, 60.58, 0.3)
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  }
}
proc shape3d_10() {
  axon[6] {	pt3dadd(206.39, 466.68, -56.4, 0.3)
	pt3dadd(209.22, 473.37, -59.36, 0.3)
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  }
}
proc shape3d_11() {
  axon[12] {	pt3dadd(-118.13, 52.94, 4.94, 0.3)
	pt3dadd(-116.59, 57.4, 2.29, 0.3)
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  }
}
proc shape3d_12() {
  axon[20] {  }
  axon[21] {pt3dclear()
	pt3dadd(199.1, 443.57, 18.49, 0.3)
	pt3dadd(196.04, 446.91, 16.09, 0.3)
	pt3dadd(193.19, 450.82, 12.24, 0.3)
	pt3dadd(189.16, 454.44, 10.32, 0.3)
	pt3dadd(186.32, 461.51, 6.68, 0.3)
	pt3dadd(186, 462.14, 6.71, 0.3)
	pt3dadd(184.52, 463.89, 4.27, 0.3)
	pt3dadd(185, 466.89, 4.49, 0.3)
	pt3dadd(184.64, 467.25, 1.49, 0.3)
	pt3dadd(184.89, 469.46, -0.85, 0.3)
	pt3dadd(185.93, 470.89, -3.22, 0.3)
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  }
}
proc shape3d_13() {
  axon[28] {	pt3dadd(-26.76, 296.42, 55.83, 0.3)
	pt3dadd(-24.83, 302.33, 59.81, 0.3)
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  }
}
proc shape3d_14() {
  axon[31] {	pt3dadd(212.48, 572.27, -59.59, 0.3)
	pt3dadd(213.78, 571.38, -60.6, 0.3)
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  }
}
proc shape3d_15() {
  axon[44] {	pt3dadd(-159.66, -113.11, -45.9, 0.3)
	pt3dadd(-159.77, -116.64, -47.65, 0.3)
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  }
}
proc shape3d_16() {
  axon[46] {	pt3dadd(59.12, 188.67, -75.6, 0.3)
	pt3dadd(65.76, 195.69, -78.89, 0.3)
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  }
}
proc shape3d_17() {
  axon[52] {	pt3dadd(-277.32, -279.38, -164.79, 0.3)
	pt3dadd(-278.27, -282.22, -165.01, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 84 apic[i] all.append()
    for i=0, 90 dend[i] all.append()
    for i=0, 54 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 54 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 90 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 84 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 84

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







