// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[70], dend[107], axon[47]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 8 connect apic[i](0), apic[i-1](1)
  connect apic[9](0), apic[7](1)
  connect apic[10](0), apic[6](1)
  for i = 11, 12 connect apic[i](0), apic[i-1](1)
  connect apic[13](0), apic[11](1)
  connect apic[14](0), apic[10](1)
  connect apic[15](0), apic[5](1)
  connect apic[16](0), apic[4](1)
  connect apic[17](0), apic[3](1)
  for i = 18, 19 connect apic[i](0), apic[17](1)
  connect apic[20](0), apic[2](1)
  for i = 21, 22 connect apic[i](0), apic[20](1)
  connect apic[23](0), apic[1](1)
  for i = 24, 25 connect apic[i](0), apic[23](1)
  connect apic[26](0), apic(1)
  connect apic[27](0), soma(0.5)
  for i = 28, 32 connect apic[i](0), apic[i-1](1)
  connect apic[33](0), apic[31](1)
  connect apic[34](0), apic[30](1)
  for i = 35, 36 connect apic[i](0), apic[34](1)
  connect apic[37](0), apic[29](1)
  for i = 38, 39 connect apic[i](0), apic[37](1)
  connect apic[40](0), apic[28](1)
  for i = 41, 44 connect apic[i](0), apic[i-1](1)
  connect apic[45](0), apic[43](1)
  connect apic[46](0), apic[42](1)
  connect apic[47](0), apic[41](1)
  connect apic[48](0), apic[40](1)
  for i = 49, 50 connect apic[i](0), apic[i-1](1)
  connect apic[51](0), apic[49](1)
  connect apic[52](0), apic[48](1)
  connect apic[53](0), apic[27](1)
  for i = 54, 61 connect apic[i](0), apic[i-1](1)
  connect apic[62](0), apic[60](1)
  connect apic[63](0), apic[59](1)
  connect apic[64](0), apic[58](1)
  connect apic[65](0), apic[57](1)
  connect apic[66](0), apic[56](1)
  connect apic[67](0), apic[55](1)
  connect apic[68](0), apic[54](1)
  connect apic[69](0), apic[53](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  connect dend[10](0), dend(1)
  for i = 11, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), soma(0.5)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[23](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[33](1)
  connect dend[38](0), dend[32](1)
  connect dend[39](0), soma(0.5)
  for i = 40, 43 connect dend[i](0), dend[i-1](1)
  connect dend[44](0), dend[42](1)
  connect dend[45](0), dend[41](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), dend[40](1)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  connect dend[51](0), dend[39](1)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  connect dend[56](0), soma(0.5)
  for i = 57, 64 connect dend[i](0), dend[i-1](1)
  connect dend[65](0), dend[63](1)
  connect dend[66](0), dend[62](1)
  connect dend[67](0), dend[61](1)
  connect dend[68](0), dend[60](1)
  for i = 69, 70 connect dend[i](0), dend[68](1)
  for i = 71, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  connect dend[74](0), dend[70](1)
  connect dend[75](0), dend[59](1)
  connect dend[76](0), dend[58](1)
  for i = 77, 79 connect dend[i](0), dend[i-1](1)
  connect dend[80](0), dend[78](1)
  for i = 81, 82 connect dend[i](0), dend[80](1)
  connect dend[83](0), dend[77](1)
  connect dend[84](0), dend[76](1)
  connect dend[85](0), dend[57](1)
  for i = 86, 88 connect dend[i](0), dend[i-1](1)
  connect dend[89](0), dend[87](1)
  connect dend[90](0), dend[86](1)
  for i = 91, 92 connect dend[i](0), dend[90](1)
  connect dend[93](0), dend[85](1)
  for i = 94, 95 connect dend[i](0), dend[93](1)
  connect dend[96](0), dend[56](1)
  for i = 97, 98 connect dend[i](0), dend[i-1](1)
  connect dend[99](0), dend[97](1)
  for i = 100, 101 connect dend[i](0), dend[99](1)
  connect dend[102](0), dend[96](1)
  for i = 103, 104 connect dend[i](0), dend[i-1](1)
  connect dend[105](0), dend[103](1)
  connect dend[106](0), dend[102](1)
  connect axon(0), soma(0.5)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  connect axon[6](0), axon[2](1)
  connect axon[7](0), axon[1](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  connect axon[10](0), axon(1)
  for i = 11, 15 connect axon[i](0), axon[i-1](1)
  connect axon[16](0), axon[14](1)
  for i = 17, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  connect axon[21](0), axon[17](1)
  connect axon[22](0), axon[16](1)
  for i = 23, 24 connect axon[i](0), axon[22](1)
  connect axon[25](0), axon[13](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  for i = 28, 29 connect axon[i](0), axon[27](1)
  connect axon[30](0), axon[12](1)
  connect axon[31](0), axon[11](1)
  for i = 32, 33 connect axon[i](0), axon[i-1](1)
  connect axon[34](0), axon[32](1)
  connect axon[35](0), axon[31](1)
  connect axon[36](0), axon[10](1)
  for i = 37, 38 connect axon[i](0), axon[36](1)
  for i = 39, 41 connect axon[i](0), axon[i-1](1)
  connect axon[42](0), axon[40](1)
  connect axon[43](0), axon[39](1)
  connect axon[44](0), axon[43](1)
  connect axon[45](0), axon[38](1)
  connect axon[46](0), axon[43](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-22.602, 0, 0, 45.204)
	pt3dadd(0, 0, 0, 45.204)
	pt3dadd(22.602, 0, 0, 45.204)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-1.51, -38.61, -1.82, 2.1)
	pt3dadd(0.51, -58.09, -4.65, 1.4)
	pt3dadd(1, -89.39, -6.9, 1.2)
	pt3dadd(0.6, -126.52, -13.55, 1.2)
  }
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  }
}
proc shape3d_2() {
  apic[20] {  }
  apic[21] {pt3dclear()
	pt3dadd(2.08, -140.84, -15.78, 0.3)
	pt3dadd(7.35, -150.26, -16.24, 0.3)
	pt3dadd(14.65, -160.7, -16.11, 0.3)
	pt3dadd(17.6, -172.34, -20.03, 0.3)
	pt3dadd(19.29, -176.25, -19.45, 0.3)
	pt3dadd(21.81, -178.35, -20.3, 0.3)
	pt3dadd(26.75, -189.98, -21.29, 0.3)
	pt3dadd(32, -195.6, -21.5, 0.3)
	pt3dadd(38.6, -202.84, -21.93, 0.3)
	pt3dadd(43.07, -210.61, -23.57, 0.3)
	pt3dadd(45.72, -214.28, -24.58, 0.3)
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  }
}
proc shape3d_3() {
  apic[39] {	pt3dadd(-11.47, -252.64, 46.22, 0.3)
	pt3dadd(-12.43, -259.45, 49.64, 0.3)
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  }
}
proc shape3d_4() {
  apic[58] {	pt3dadd(-3.51, -307.21, 67.89, 0.9)
	pt3dadd(-2.53, -309.31, 68.94, 0.9)
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  }
}
proc shape3d_5() {
  dend[2] {	pt3dadd(83.69, 29.62, -18.1, 0.7)
  }
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  }
}
proc shape3d_6() {
  dend[19] {	pt3dadd(127.75, 199.62, -13.8, 0.3)
	pt3dadd(139.04, 206.7, -19.62, 0.3)
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  }
}
proc shape3d_7() {
  dend[38] {	pt3dadd(-66.04, 96.26, 2.94, 0.3)
	pt3dadd(-67.88, 104.84, 3.3, 0.3)
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  }
}
proc shape3d_8() {
  dend[55] {	pt3dadd(-63.9, 69.95, -36.85, 0.3)
	pt3dadd(-67.81, 72.49, -39.76, 0.3)
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  }
}
proc shape3d_9() {
  dend[75] {	pt3dadd(-28.48, 143.12, 7.15, 0.3)
	pt3dadd(-30.27, 158.01, 6.76, 0.3)
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  }
}
proc shape3d_10() {
  dend[94] {	pt3dadd(-9.98, 94.13, 33.95, 0.3)
	pt3dadd(-7.58, 100.92, 34.85, 0.3)
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  }
}
proc shape3d_11() {
  axon[6] {	pt3dadd(-96.21, 104.07, -118.23, 0.3)
	pt3dadd(-98.89, 102.06, -120.93, 0.3)
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  }
}
proc shape3d_12() {
  axon[20] {	pt3dadd(-289.04, -322.31, -24.38, 0.3)
	pt3dadd(-290.48, -326.02, -25.02, 0.3)
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  }
}
proc shape3d_13() {
  axon[24] {	pt3dadd(-20.11, -226.4, 78.64, 0.3)
	pt3dadd(-17.23, -227.26, 79.93, 0.3)
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  }
}
proc shape3d_14() {
  axon[28] {	pt3dadd(-382.16, -249.2, 2.1, 0.3)
	pt3dadd(-388, -255.85, 1.83, 0.3)
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  }
}
proc shape3d_15() {
  axon[37] {	pt3dadd(233.62, 91.3, -196.6, 0.3)
	pt3dadd(239.96, 83.59, -201.98, 0.3)
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  }
}
proc shape3d_16() {
  axon[43] {	pt3dadd(-356.46, 108.94, 109.08, 0.3)
	pt3dadd(-360.56, 106.82, 111.01, 0.3)
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  }
}
proc shape3d_17() {
  axon[46] {	pt3dadd(-358.26, -14.21, 200.33, 0.3)
	pt3dadd(-357.38, -16.4, 203.67, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 69 apic[i] all.append()
    for i=0, 106 dend[i] all.append()
    for i=0, 46 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 46 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 106 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 69 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 69

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







