// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[63], dend[92], axon[37]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  for i = 12, 13 connect apic[i](0), apic[11](1)
  connect apic[14](0), apic[8](1)
  for i = 15, 16 connect apic[i](0), apic[i-1](1)
  connect apic[17](0), apic[15](1)
  connect apic[18](0), apic[14](1)
  connect apic[19](0), apic[7](1)
  connect apic[20](0), apic[6](1)
  connect apic[21](0), apic[5](1)
  connect apic[22](0), apic[4](1)
  connect apic[23](0), apic[3](1)
  connect apic[24](0), apic[2](1)
  for i = 25, 32 connect apic[i](0), apic[i-1](1)
  connect apic[33](0), apic[31](1)
  connect apic[34](0), apic[30](1)
  connect apic[35](0), apic[29](1)
  connect apic[36](0), apic[28](1)
  connect apic[37](0), apic[27](1)
  connect apic[38](0), apic[26](1)
  connect apic[39](0), apic[25](1)
  connect apic[40](0), apic[24](1)
  connect apic[41](0), apic[1](1)
  for i = 42, 43 connect apic[i](0), apic[41](1)
  connect apic[44](0), apic(1)
  for i = 45, 50 connect apic[i](0), apic[i-1](1)
  connect apic[51](0), apic[49](1)
  for i = 52, 53 connect apic[i](0), apic[51](1)
  connect apic[54](0), apic[48](1)
  connect apic[55](0), apic[47](1)
  connect apic[56](0), apic[46](1)
  connect apic[57](0), apic[45](1)
  connect apic[58](0), apic[44](1)
  for i = 59, 60 connect apic[i](0), apic[i-1](1)
  connect apic[61](0), apic[59](1)
  connect apic[62](0), apic[58](1)
  connect dend(0), soma(0.5)
  for i = 1, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend[2](1)
  connect dend[13](0), dend[1](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend(1)
  for i = 17, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  for i = 21, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  connect dend[24](0), dend[20](1)
  for i = 25, 26 connect dend[i](0), dend[24](1)
  connect dend[27](0), soma(0.5)
  for i = 28, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  for i = 32, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  connect dend[35](0), dend[31](1)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  connect dend[38](0), dend[28](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  connect dend[43](0), dend[27](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  connect dend[52](0), soma(0.5)
  for i = 53, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  connect dend[63](0), dend[57](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  connect dend[66](0), dend[54](1)
  for i = 67, 68 connect dend[i](0), dend[66](1)
  connect dend[69](0), dend[53](1)
  connect dend[70](0), dend[52](1)
  for i = 71, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), dend[70](1)
  connect dend[77](0), soma(0.5)
  for i = 78, 80 connect dend[i](0), dend[i-1](1)
  connect dend[81](0), dend[79](1)
  for i = 82, 83 connect dend[i](0), dend[81](1)
  connect dend[84](0), dend[78](1)
  for i = 85, 86 connect dend[i](0), dend[84](1)
  connect dend[87](0), dend[77](1)
  for i = 88, 89 connect dend[i](0), dend[i-1](1)
  connect dend[90](0), dend[88](1)
  connect dend[91](0), dend[87](1)
  connect axon(0), soma(0.5)
  for i = 1, 5 connect axon[i](0), axon[i-1](1)
  connect axon[6](0), axon[4](1)
  for i = 7, 8 connect axon[i](0), axon[6](1)
  connect axon[9](0), axon[3](1)
  for i = 10, 11 connect axon[i](0), axon[i-1](1)
  connect axon[12](0), axon[10](1)
  connect axon[13](0), axon[9](1)
  for i = 14, 15 connect axon[i](0), axon[13](1)
  connect axon[16](0), axon[2](1)
  connect axon[17](0), axon[1](1)
  for i = 18, 19 connect axon[i](0), axon[17](1)
  for i = 20, 21 connect axon[i](0), axon[19](1)
  connect axon[22](0), axon(1)
  for i = 23, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  connect axon[28](0), axon[22](1)
  for i = 29, 30 connect axon[i](0), axon[28](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  for i = 33, 34 connect axon[i](0), axon[i-1](1)
  connect axon[35](0), axon[33](1)
  connect axon[36](0), axon[32](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-14.053, 0, 0, 28.106)
	pt3dadd(0, 0, 0, 28.106)
	pt3dadd(14.053, 0, 0, 28.106)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(3.49, 19.85, -1.33, 5.5)
	pt3dadd(5.09, 36.49, -0.51, 5.5)
	pt3dadd(6.16, 57.11, -0.11, 4.6)
	pt3dadd(6.18, 70.48, -2.26, 4.6)
  }
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  }
}
proc shape3d_2() {
  apic[19] {	pt3dadd(14.25, 198.74, -5.56, 0.3)
	pt3dadd(14.49, 208.99, -8.93, 0.3)
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  }
}
proc shape3d_3() {
  apic[34] {  }
  apic[35] {pt3dclear()
	pt3dadd(-110.25, 378.65, 26.03, 0.4)
	pt3dadd(-119.66, 384.9, 23.76, 0.3)
	pt3dadd(-126.35, 391.38, 23.84, 0.3)
	pt3dadd(-130.44, 398.82, 23.18, 0.3)
	pt3dadd(-133.19, 409.36, 23.44, 0.3)
	pt3dadd(-136.48, 416.94, 24.38, 0.3)
	pt3dadd(-141.02, 424.18, 27.22, 0.3)
	pt3dadd(-146.58, 434.38, 29.67, 0.3)
	pt3dadd(-152.57, 445.53, 31.48, 0.3)
	pt3dadd(-159.61, 455.21, 33.78, 0.3)
	pt3dadd(-164.51, 461.36, 35.65, 0.3)
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  }
}
proc shape3d_4() {
  apic[52] {	pt3dadd(69.96, 499.97, -90.75, 0.3)
	pt3dadd(83.22, 507.74, -89.17, 0.3)
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  }
}
proc shape3d_5() {
  dend[8] {	pt3dadd(99.65, -109.44, 61.77, 0.3)
	pt3dadd(101.91, -114.21, 64.49, 0.3)
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  }
}
proc shape3d_6() {
  dend[25] {	pt3dadd(-70.39, -41.13, 83.76, 0.3)
	pt3dadd(-72.55, -42.54, 85.11, 0.3)
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  }
}
proc shape3d_7() {
  dend[49] {	pt3dadd(28.44, -87.5, -26.35, 0.3)
	pt3dadd(31.15, -92.06, -27.12, 0.3)
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  }
}
proc shape3d_8() {
  dend[69] {	pt3dadd(16.02, -85.75, -51.41, 0.3)
	pt3dadd(17.74, -90.83, -52.27, 0.3)
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  }
}
proc shape3d_9() {
  dend[87] {  }
  dend[88] {pt3dclear()
	pt3dadd(-70.06, -11.98, 2.87, 0.3)
	pt3dadd(-78.59, -15.54, 3.07, 0.3)
	pt3dadd(-94.78, -20.42, 0.35, 0.3)
	pt3dadd(-105.35, -24.98, 0.87, 0.3)
	pt3dadd(-120.49, -30.38, -2.16, 0.3)
	pt3dadd(-131.13, -34.39, -1.18, 0.3)
	pt3dadd(-137.24, -38.36, -0.13, 0.3)
  }
  dend[89] {pt3dclear()
	pt3dadd(-137.24, -38.36, -0.13, 0.3)
	pt3dadd(-140.89, -45.58, -2.02, 0.3)
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  }
}
proc shape3d_10() {
  axon[8] {	pt3dadd(-337.39, 242.68, -57.41, 0.3)
	pt3dadd(-344.65, 242.76, -55.84, 0.3)
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  }
}
proc shape3d_11() {
  axon[13] {	pt3dadd(144.97, 350.55, 84.14, 0.3)
	pt3dadd(152.75, 353.27, 85.94, 0.3)
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  }
}
proc shape3d_12() {
  axon[16] {	pt3dadd(108.37, -88.86, -20.32, 0.3)
	pt3dadd(121.12, -87.53, -17.74, 0.3)
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  }
}
proc shape3d_13() {
  axon[25] {	pt3dadd(-132.28, -103.54, -28.84, 0.3)
	pt3dadd(-134.39, -104.49, -28.02, 0.3)
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  }
}
proc shape3d_14() {
  axon[33] {	pt3dadd(-329.98, -94.83, -61.06, 0.3)
	pt3dadd(-332.41, -95.57, -57.77, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 62 apic[i] all.append()
    for i=0, 91 dend[i] all.append()
    for i=0, 36 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 36 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 91 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 62 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 62

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







