// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[77], dend[110], axon[43]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  connect apic[12](0), apic[8](1)
  connect apic[13](0), apic[7](1)
  for i = 14, 15 connect apic[i](0), apic[13](1)
  connect apic[16](0), apic[6](1)
  connect apic[17](0), apic[5](1)
  for i = 18, 19 connect apic[i](0), apic[17](1)
  connect apic[20](0), apic[4](1)
  connect apic[21](0), apic[3](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[2](1)
  connect apic[25](0), apic[1](1)
  for i = 26, 32 connect apic[i](0), apic[i-1](1)
  connect apic[33](0), apic[31](1)
  connect apic[34](0), apic[30](1)
  connect apic[35](0), apic[29](1)
  for i = 36, 37 connect apic[i](0), apic[35](1)
  for i = 38, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  connect apic[41](0), apic[37](1)
  connect apic[42](0), apic[28](1)
  connect apic[43](0), apic[27](1)
  for i = 44, 45 connect apic[i](0), apic[43](1)
  connect apic[46](0), apic[26](1)
  connect apic[47](0), apic[25](1)
  connect apic[48](0), apic(1)
  for i = 49, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  connect apic[54](0), apic[50](1)
  connect apic[55](0), apic[49](1)
  connect apic[56](0), apic[48](1)
  for i = 57, 65 connect apic[i](0), apic[i-1](1)
  connect apic[66](0), apic[64](1)
  connect apic[67](0), apic[63](1)
  for i = 68, 69 connect apic[i](0), apic[67](1)
  connect apic[70](0), apic[62](1)
  connect apic[71](0), apic[61](1)
  connect apic[72](0), apic[60](1)
  connect apic[73](0), apic[59](1)
  connect apic[74](0), apic[58](1)
  connect apic[75](0), apic[57](1)
  connect apic[76](0), apic[56](1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  connect dend[10](0), dend(1)
  for i = 11, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  connect dend[17](0), dend[11](1)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  for i = 22, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  connect dend[26](0), dend[10](1)
  connect dend[27](0), soma(0.5)
  for i = 28, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  connect dend[33](0), dend[27](1)
  connect dend[34](0), soma(0.5)
  for i = 35, 38 connect dend[i](0), dend[i-1](1)
  connect dend[39](0), dend[37](1)
  connect dend[40](0), dend[36](1)
  for i = 41, 43 connect dend[i](0), dend[i-1](1)
  connect dend[44](0), dend[42](1)
  connect dend[45](0), dend[41](1)
  connect dend[46](0), dend[40](1)
  connect dend[47](0), dend[35](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  connect dend[52](0), dend[34](1)
  connect dend[53](0), soma(0.5)
  for i = 54, 57 connect dend[i](0), dend[i-1](1)
  connect dend[58](0), dend[56](1)
  for i = 59, 60 connect dend[i](0), dend[58](1)
  connect dend[61](0), dend[55](1)
  for i = 62, 63 connect dend[i](0), dend[61](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  connect dend[66](0), dend[54](1)
  connect dend[67](0), dend[53](1)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  for i = 70, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  connect dend[74](0), soma(0.5)
  for i = 75, 78 connect dend[i](0), dend[i-1](1)
  connect dend[79](0), dend[77](1)
  connect dend[80](0), dend[76](1)
  for i = 81, 82 connect dend[i](0), dend[i-1](1)
  connect dend[83](0), dend[81](1)
  connect dend[84](0), dend[80](1)
  connect dend[85](0), dend[75](1)
  for i = 86, 87 connect dend[i](0), dend[85](1)
  for i = 88, 89 connect dend[i](0), dend[87](1)
  for i = 90, 91 connect dend[i](0), dend[89](1)
  connect dend[92](0), dend[74](1)
  connect dend[93](0), soma(0.5)
  for i = 94, 96 connect dend[i](0), dend[i-1](1)
  connect dend[97](0), dend[95](1)
  connect dend[98](0), dend[94](1)
  for i = 99, 100 connect dend[i](0), dend[i-1](1)
  connect dend[101](0), dend[99](1)
  connect dend[102](0), dend[98](1)
  for i = 103, 104 connect dend[i](0), dend[102](1)
  connect dend[105](0), dend[93](1)
  for i = 106, 107 connect dend[i](0), dend[105](1)
  for i = 108, 109 connect dend[i](0), dend[107](1)
  connect axon(0), soma(0.5)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  connect axon[7](0), axon[1](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  connect axon[10](0), axon(1)
  for i = 11, 12 connect axon[i](0), axon[i-1](1)
  connect axon[13](0), axon[11](1)
  connect axon[14](0), axon[10](1)
  for i = 15, 18 connect axon[i](0), axon[i-1](1)
  connect axon[19](0), axon[17](1)
  connect axon[20](0), axon[16](1)
  for i = 21, 22 connect axon[i](0), axon[20](1)
  connect axon[23](0), axon[15](1)
  for i = 24, 25 connect axon[i](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[i-1](1)
  connect axon[28](0), axon[26](1)
  connect axon[29](0), axon[25](1)
  connect axon[30](0), axon[14](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  for i = 33, 34 connect axon[i](0), axon[i-1](1)
  connect axon[35](0), axon[33](1)
  for i = 36, 37 connect axon[i](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[37](1)
  connect axon[40](0), axon[32](1)
  for i = 41, 42 connect axon[i](0), axon[40](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-20.78, 0, 0, 41.56)
	pt3dadd(0, 0, 0, 41.56)
	pt3dadd(20.78, 0, 0, 41.56)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-8.24, -31.23, 0.74, 4.8)
	pt3dadd(-9.9, -45.14, 0.46, 4.8)
	pt3dadd(-10.47, -54.7, 1.81, 4.8)
	pt3dadd(-12.18, -65.09, 3.08, 4.8)
  }
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  }
}
proc shape3d_2() {
  apic[15] {	pt3dadd(-76.6, -422.39, 65.2, 0.3)
	pt3dadd(-79.91, -429.53, 67.91, 0.3)
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  }
}
proc shape3d_3() {
  apic[33] {	pt3dadd(-85.85, -508.24, 121.16, 0.3)
	pt3dadd(-86.3, -516.82, 123.03, 0.3)
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  }
}
proc shape3d_4() {
  apic[52] {	pt3dadd(-2.52, -185.96, -0.84, 0.3)
	pt3dadd(-0.09, -193.4, -1.78, 0.3)
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  }
}
proc shape3d_5() {
  apic[72] {	pt3dadd(-106.97, -177, -36.3, 0.3)
	pt3dadd(-109.67, -179.05, -39, 0.3)
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  }
}
proc shape3d_6() {
  dend[10] {	pt3dadd(1.54, 41.46, -14.25, 0.9)
  }
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  }
}
proc shape3d_7() {
  dend[29] {	pt3dadd(10.57, 102.56, 20.14, 0.3)
	pt3dadd(13.85, 107.6, 20.9, 0.3)
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  }
}
proc shape3d_8() {
  dend[40] {	pt3dadd(61.28, 94.14, -1.85, 0.3)
	pt3dadd(63.22, 99.92, -2.15, 0.3)
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  }
}
proc shape3d_9() {
  dend[57] {	pt3dadd(17.39, 89.57, 32.92, 0.3)
	pt3dadd(20.32, 96.15, 35.19, 0.3)
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  }
}
proc shape3d_10() {
  dend[68] {	pt3dadd(29.46, 93.32, 52.76, 0.3)
	pt3dadd(31.4, 100.06, 54.97, 0.3)
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  }
}
proc shape3d_11() {
  dend[84] {	pt3dadd(43.62, 45.69, 47.03, 0.3)
	pt3dadd(44.61, 47.45, 52.13, 0.3)
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  }
}
proc shape3d_12() {
  dend[101] {	pt3dadd(216.68, 154.94, 68.22, 0.3)
	pt3dadd(222.25, 158.12, 68.11, 0.3)
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  }
}
proc shape3d_13() {
  axon[5] {	pt3dadd(-391.54, 150.44, 44.75, 0.3)
  }
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  }
}
proc shape3d_14() {
  axon[22] {	pt3dadd(-2.47, 77.24, 111.69, 0.3)
	pt3dadd(-2, 74.59, 113.69, 0.3)
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  }
}
proc shape3d_15() {
  axon[31] {	pt3dadd(69.12, 66.44, 73.44, 0.3)
	pt3dadd(74.8, 54.89, 75.15, 0.3)
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  }
}
proc shape3d_16() {
  axon[40] {	pt3dadd(-68.13, 242.32, -0.54, 0.3)
	pt3dadd(-73.85, 248.9, -6.33, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 76 apic[i] all.append()
    for i=0, 109 dend[i] all.append()
    for i=0, 42 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 42 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 109 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 76 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 76

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







