// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[119], dend[68], axon[57]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 29 connect apic[i](0), apic[i-1](1)
  connect apic[30](0), apic[28](1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  connect apic[33](0), apic[27](1)
  connect apic[34](0), apic[26](1)
  for i = 35, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  for i = 41, 42 connect apic[i](0), apic[i-1](1)
  connect apic[43](0), apic[41](1)
  connect apic[44](0), apic[40](1)
  connect apic[45](0), apic[37](1)
  for i = 46, 47 connect apic[i](0), apic[45](1)
  connect apic[48](0), apic[36](1)
  connect apic[49](0), apic[35](1)
  connect apic[50](0), apic[34](1)
  connect apic[51](0), apic[25](1)
  connect apic[52](0), apic[24](1)
  connect apic[53](0), apic[23](1)
  connect apic[54](0), apic[22](1)
  connect apic[55](0), apic[21](1)
  connect apic[56](0), apic[20](1)
  connect apic[57](0), apic[19](1)
  for i = 58, 59 connect apic[i](0), apic[57](1)
  connect apic[60](0), apic[18](1)
  connect apic[61](0), apic[17](1)
  connect apic[62](0), apic[16](1)
  for i = 63, 64 connect apic[i](0), apic[62](1)
  connect apic[65](0), apic[15](1)
  for i = 66, 67 connect apic[i](0), apic[65](1)
  connect apic[68](0), apic[14](1)
  connect apic[69](0), apic[13](1)
  connect apic[70](0), apic[12](1)
  connect apic[71](0), apic[11](1)
  connect apic[72](0), apic[10](1)
  for i = 73, 74 connect apic[i](0), apic[72](1)
  connect apic[75](0), apic[9](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  connect apic[80](0), apic[8](1)
  for i = 81, 82 connect apic[i](0), apic[80](1)
  connect apic[83](0), apic[7](1)
  for i = 84, 85 connect apic[i](0), apic[83](1)
  connect apic[86](0), apic[6](1)
  for i = 87, 88 connect apic[i](0), apic[i-1](1)
  connect apic[89](0), apic[87](1)
  connect apic[90](0), apic[86](1)
  for i = 91, 92 connect apic[i](0), apic[90](1)
  connect apic[93](0), apic[5](1)
  connect apic[94](0), apic[4](1)
  for i = 95, 96 connect apic[i](0), apic[i-1](1)
  connect apic[97](0), apic[95](1)
  connect apic[98](0), apic[94](1)
  connect apic[99](0), apic[3](1)
  for i = 100, 101 connect apic[i](0), apic[99](1)
  connect apic[102](0), apic[2](1)
  for i = 103, 104 connect apic[i](0), apic[102](1)
  connect apic[105](0), apic[1](1)
  for i = 106, 108 connect apic[i](0), apic[i-1](1)
  connect apic[109](0), apic[107](1)
  connect apic[110](0), apic[106](1)
  connect apic[111](0), apic[105](1)
  for i = 112, 113 connect apic[i](0), apic[111](1)
  connect apic[114](0), apic(1)
  for i = 115, 116 connect apic[i](0), apic[i-1](1)
  connect apic[117](0), apic[115](1)
  connect apic[118](0), apic[114](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), dend(1)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  connect dend[12](0), dend[8](1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), dend[20](1)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  connect dend[35](0), dend[19](1)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  connect dend[40](0), soma(0.5)
  for i = 41, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  connect dend[50](0), dend[40](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect dend[53](0), soma(0.5)
  for i = 54, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  connect dend[58](0), dend[54](1)
  for i = 59, 60 connect dend[i](0), dend[58](1)
  connect dend[61](0), dend[53](1)
  for i = 62, 63 connect dend[i](0), dend[i-1](1)
  connect dend[64](0), dend[62](1)
  connect dend[65](0), dend[61](1)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  connect axon(0), soma(0.5)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  for i = 7, 8 connect axon[i](0), axon[6](1)
  connect axon[9](0), axon[1](1)
  for i = 10, 11 connect axon[i](0), axon[i-1](1)
  connect axon[12](0), axon[10](1)
  connect axon[13](0), axon[9](1)
  for i = 14, 15 connect axon[i](0), axon[13](1)
  for i = 16, 17 connect axon[i](0), axon[15](1)
  for i = 18, 19 connect axon[i](0), axon[17](1)
  for i = 20, 21 connect axon[i](0), axon[19](1)
  for i = 22, 23 connect axon[i](0), axon[21](1)
  connect axon[24](0), axon(1)
  for i = 25, 26 connect axon[i](0), axon[i-1](1)
  connect axon[27](0), axon[25](1)
  for i = 28, 29 connect axon[i](0), axon[27](1)
  for i = 30, 31 connect axon[i](0), axon[i-1](1)
  connect axon[32](0), axon[30](1)
  connect axon[33](0), axon[29](1)
  connect axon[34](0), axon[24](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[37](1)
  for i = 40, 41 connect axon[i](0), axon[39](1)
  for i = 42, 43 connect axon[i](0), axon[41](1)
  for i = 44, 45 connect axon[i](0), axon[43](1)
  connect axon[46](0), axon[34](1)
  for i = 47, 49 connect axon[i](0), axon[i-1](1)
  connect axon[50](0), axon[48](1)
  connect axon[51](0), axon[47](1)
  connect axon[52](0), axon[46](1)
  for i = 53, 54 connect axon[i](0), axon[52](1)
  for i = 55, 56 connect axon[i](0), axon[54](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-9.8312, 0, 0, 19.6624)
	pt3dadd(0, 0, 0, 19.6624)
	pt3dadd(9.8312, 0, 0, 19.6624)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(1.18, 14.87, 5.19, 2.4)
	pt3dadd(3.56, 23.06, 3.88, 1.5)
	pt3dadd(5.16, 30.07, -5.09, 1.5)
  }
  apic[1] {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[41] {	pt3dadd(-95.96, 511.54, -25.21, 0.3)
	pt3dadd(-100.67, 517.02, -29.48, 0.3)
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  }
}
proc shape3d_3() {
  apic[54] {	pt3dadd(33.43, 375.73, -44.48, 0.3)
	pt3dadd(33.14, 381.04, -47.13, 0.3)
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  }
}
proc shape3d_4() {
  apic[67] {	pt3dadd(70.51, 334.21, -38.17, 0.3)
	pt3dadd(71.62, 337.57, -39.59, 0.3)
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  }
}
proc shape3d_5() {
  apic[84] {	pt3dadd(66.51, 160.79, -31.95, 0.3)
	pt3dadd(69.9, 166.15, -34.6, 0.3)
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  }
}
proc shape3d_6() {
  apic[103] {	pt3dadd(20.06, 127.23, -40.4, 0.3)
	pt3dadd(20.83, 137.96, -43.99, 0.3)
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  }
}
proc shape3d_7() {
  dend[7] {	pt3dadd(39.05, -174.19, -18.36, 0.3)
	pt3dadd(42.43, -181.29, -18.79, 0.3)
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  }
}
proc shape3d_8() {
  dend[25] {	pt3dadd(17.57, -55.91, -33.81, 0.3)
	pt3dadd(15.16, -61.96, -35.57, 0.3)
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  }
}
proc shape3d_9() {
  dend[43] {	pt3dadd(-21.46, -33.61, -11.31, 0.3)
	pt3dadd(-22.76, -37.45, -9.41, 0.3)
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  }
}
proc shape3d_10() {
  dend[59] {	pt3dadd(-39.58, -149.09, 74.32, 0.3)
	pt3dadd(-40.88, -153.42, 75.21, 0.3)
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  }
}
proc shape3d_11() {
  axon[3] {	pt3dadd(-357.28, -129.96, -54.39, 0.3)
	pt3dadd(-359.24, -130.43, -56.17, 0.3)
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  }
}
proc shape3d_12() {
  axon[26] {	pt3dadd(37.82, -221.45, -43.53, 0.3)
	pt3dadd(38.83, -216.52, -44.99, 0.3)
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  }
}
proc shape3d_13() {
  axon[43] {	pt3dadd(-532.28, -68.24, -143.77, 0.3)
	pt3dadd(-534.18, -68.23, -145.05, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 118 apic[i] all.append()
    for i=0, 67 dend[i] all.append()
    for i=0, 56 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 56 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 67 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 118 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 118

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







