// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[171], dend[23], axon[11]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  connect apic[15](0), apic[11](1)
  connect apic[16](0), apic[8](1)
  connect apic[17](0), apic[7](1)
  connect apic[18](0), apic[6](1)
  connect apic[19](0), apic[5](1)
  connect apic[20](0), apic[4](1)
  connect apic[21](0), apic[3](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[2](1)
  for i = 25, 26 connect apic[i](0), apic[24](1)
  connect apic[27](0), apic[1](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  connect apic[30](0), apic(1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  connect apic[33](0), soma(0.5)
  for i = 34, 54 connect apic[i](0), apic[i-1](1)
  connect apic[55](0), apic[53](1)
  connect apic[56](0), apic[52](1)
  for i = 57, 58 connect apic[i](0), apic[56](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  connect apic[61](0), apic[51](1)
  connect apic[62](0), apic[50](1)
  connect apic[63](0), apic[49](1)
  connect apic[64](0), apic[48](1)
  connect apic[65](0), apic[47](1)
  connect apic[66](0), apic[46](1)
  connect apic[67](0), apic[45](1)
  for i = 68, 69 connect apic[i](0), apic[67](1)
  connect apic[70](0), apic[44](1)
  connect apic[71](0), apic[43](1)
  connect apic[72](0), apic[42](1)
  connect apic[73](0), apic[41](1)
  connect apic[74](0), apic[40](1)
  for i = 75, 76 connect apic[i](0), apic[74](1)
  connect apic[77](0), apic[39](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  connect apic[80](0), apic[38](1)
  for i = 81, 82 connect apic[i](0), apic[80](1)
  connect apic[83](0), apic[37](1)
  for i = 84, 85 connect apic[i](0), apic[83](1)
  connect apic[86](0), apic[36](1)
  for i = 87, 88 connect apic[i](0), apic[86](1)
  connect apic[89](0), apic[35](1)
  for i = 90, 91 connect apic[i](0), apic[89](1)
  connect apic[92](0), apic[34](1)
  for i = 93, 94 connect apic[i](0), apic[92](1)
  connect apic[95](0), apic[33](1)
  for i = 96, 97 connect apic[i](0), apic[95](1)
  connect apic[98](0), soma(0.5)
  for i = 99, 118 connect apic[i](0), apic[i-1](1)
  connect apic[119](0), apic[117](1)
  for i = 120, 121 connect apic[i](0), apic[i-1](1)
  connect apic[122](0), apic[120](1)
  for i = 123, 124 connect apic[i](0), apic[122](1)
  connect apic[125](0), apic[119](1)
  for i = 126, 127 connect apic[i](0), apic[i-1](1)
  connect apic[128](0), apic[126](1)
  connect apic[129](0), apic[125](1)
  connect apic[130](0), apic[116](1)
  connect apic[131](0), apic[115](1)
  connect apic[132](0), apic[114](1)
  connect apic[133](0), apic[113](1)
  connect apic[134](0), apic[112](1)
  connect apic[135](0), apic[111](1)
  for i = 136, 137 connect apic[i](0), apic[135](1)
  connect apic[138](0), apic[110](1)
  for i = 139, 140 connect apic[i](0), apic[138](1)
  connect apic[141](0), apic[109](1)
  connect apic[142](0), apic[108](1)
  connect apic[143](0), apic[107](1)
  for i = 144, 145 connect apic[i](0), apic[143](1)
  connect apic[146](0), apic[106](1)
  connect apic[147](0), apic[105](1)
  connect apic[148](0), apic[104](1)
  for i = 149, 150 connect apic[i](0), apic[148](1)
  connect apic[151](0), apic[103](1)
  connect apic[152](0), apic[102](1)
  for i = 153, 154 connect apic[i](0), apic[i-1](1)
  connect apic[155](0), apic[153](1)
  connect apic[156](0), apic[152](1)
  for i = 157, 158 connect apic[i](0), apic[156](1)
  connect apic[159](0), apic[101](1)
  for i = 160, 161 connect apic[i](0), apic[159](1)
  for i = 162, 163 connect apic[i](0), apic[161](1)
  connect apic[164](0), apic[100](1)
  for i = 165, 166 connect apic[i](0), apic[i-1](1)
  connect apic[167](0), apic[165](1)
  connect apic[168](0), apic[164](1)
  connect apic[169](0), apic[99](1)
  connect apic[170](0), apic[98](1)
  connect dend(0), soma(0.5)
  for i = 1, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  connect dend[8](0), dend[4](1)
  connect dend[9](0), dend[3](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend[2](1)
  connect dend[13](0), dend[1](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  connect dend[18](0), dend(1)
  for i = 19, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  connect dend[22](0), dend[18](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon(1)
  for i = 3, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  connect axon[8](0), axon[2](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-8.7807, 0, 0, 17.5614)
	pt3dadd(0, 0, 0, 17.5614)
	pt3dadd(8.7807, 0, 0, 17.5614)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(4.09, 5.31, -6.52, 2.4)
	pt3dadd(6.08, 7.54, -8.41, 1.7)
  }
  apic[1] {pt3dclear()
	pt3dadd(6.08, 7.54, -8.41, 1.7)
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  }
}
proc shape3d_2() {
  apic[24] {  }
  apic[25] {pt3dclear()
	pt3dadd(39.53, 27.53, 1.5, 0.3)
	pt3dadd(45.69, 28.84, -1.04, 0.3)
	pt3dadd(51.72, 28.68, -2.81, 0.3)
	pt3dadd(58.41, 28, -3.84, 0.3)
	pt3dadd(65.03, 22.79, -5, 0.3)
	pt3dadd(69.82, 20.88, -4.2, 0.3)
	pt3dadd(75.68, 15.17, -6.75, 0.3)
	pt3dadd(85.66, 11.56, -9.76, 0.3)
	pt3dadd(89.48, 10.61, -11.48, 0.3)
	pt3dadd(92.53, 12.8, -12.31, 0.3)
	pt3dadd(95.55, 18.44, -14.37, 0.3)
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  }
}
proc shape3d_3() {
  apic[57] {	pt3dadd(150.15, 408.66, 105.87, 0.3)
  }
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  }
}
proc shape3d_4() {
  apic[75] {	pt3dadd(32.15, 173.16, 23.47, 0.3)
	pt3dadd(32, 186.65, 21.37, 0.3)
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  }
}
proc shape3d_5() {
  apic[96] {	pt3dadd(-112.97, 92.22, 52.17, 0.3)
	pt3dadd(-115.15, 103.01, 52.69, 0.3)
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  }
}
proc shape3d_6() {
  apic[130] {	pt3dadd(-15.33, 396.88, 3.98, 0.6)
	pt3dadd(-9.7, 396.39, 4.71, 0.6)
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  }
}
proc shape3d_7() {
  apic[147] {	pt3dadd(-32.62, 172.28, -53.94, 0.3)
	pt3dadd(-35.89, 179.09, -54.63, 0.3)
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  }
}
proc shape3d_8() {
  apic[169] {	pt3dadd(-34.95, 26.69, -43.68, 0.3)
	pt3dadd(-37.18, 29.14, -49.12, 0.3)
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  }
}
proc shape3d_9() {
  dend[21] {	pt3dadd(35.28, -123.49, 9.91, 0.3)
	pt3dadd(40.51, -124.28, 13.84, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 170 apic[i] all.append()
    for i=0, 22 dend[i] all.append()
    for i=0, 10 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 10 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 22 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 170 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 170

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







