// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[62], dend[64], axon[39]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 5 connect apic[i](0), apic[i-1](1)
  connect apic[6](0), apic[4](1)
  connect apic[7](0), apic[3](1)
  for i = 8, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  connect apic[13](0), apic[7](1)
  connect apic[14](0), apic[2](1)
  connect apic[15](0), apic[1](1)
  for i = 16, 19 connect apic[i](0), apic[i-1](1)
  connect apic[20](0), apic[18](1)
  connect apic[21](0), apic[17](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[16](1)
  connect apic[25](0), apic[15](1)
  connect apic[26](0), apic(1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  for i = 29, 30 connect apic[i](0), apic[i-1](1)
  connect apic[31](0), apic[29](1)
  connect apic[32](0), apic[28](1)
  connect apic[33](0), soma(0.5)
  for i = 34, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  connect apic[41](0), apic[37](1)
  connect apic[42](0), apic[36](1)
  connect apic[43](0), apic[35](1)
  connect apic[44](0), apic[34](1)
  for i = 45, 46 connect apic[i](0), apic[44](1)
  connect apic[47](0), apic[33](1)
  for i = 48, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  connect apic[56](0), apic[50](1)
  connect apic[57](0), apic[49](1)
  connect apic[58](0), apic[48](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  connect apic[61](0), apic[47](1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  connect dend[14](0), dend[6](1)
  connect dend[15](0), dend[1](1)
  for i = 16, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  connect dend[21](0), dend[15](1)
  connect dend[22](0), dend(1)
  for i = 23, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[i-1](1)
  connect dend[28](0), dend[26](1)
  connect dend[29](0), dend[25](1)
  connect dend[30](0), dend[22](1)
  connect dend[31](0), soma(0.5)
  for i = 32, 38 connect dend[i](0), dend[i-1](1)
  connect dend[39](0), dend[37](1)
  connect dend[40](0), dend[36](1)
  connect dend[41](0), dend[35](1)
  for i = 42, 43 connect dend[i](0), dend[i-1](1)
  connect dend[44](0), dend[42](1)
  connect dend[45](0), dend[41](1)
  for i = 46, 47 connect dend[i](0), dend[i-1](1)
  connect dend[48](0), dend[46](1)
  connect dend[49](0), dend[45](1)
  connect dend[50](0), dend[34](1)
  connect dend[51](0), dend[33](1)
  for i = 52, 53 connect dend[i](0), dend[i-1](1)
  connect dend[54](0), dend[52](1)
  connect dend[55](0), dend[51](1)
  connect dend[56](0), dend[32](1)
  for i = 57, 58 connect dend[i](0), dend[i-1](1)
  connect dend[59](0), dend[57](1)
  connect dend[60](0), dend[56](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  connect dend[63](0), dend[31](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  connect axon[4](0), axon(1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  for i = 7, 10 connect axon[i](0), axon[i-1](1)
  connect axon[11](0), axon[9](1)
  connect axon[12](0), axon[8](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  connect axon[15](0), axon[7](1)
  for i = 16, 17 connect axon[i](0), axon[15](1)
  for i = 18, 19 connect axon[i](0), axon[17](1)
  connect axon[20](0), axon[6](1)
  for i = 21, 22 connect axon[i](0), axon[i-1](1)
  connect axon[23](0), axon[21](1)
  connect axon[24](0), axon[20](1)
  for i = 25, 26 connect axon[i](0), axon[i-1](1)
  connect axon[27](0), axon[25](1)
  connect axon[28](0), axon[24](1)
  for i = 29, 30 connect axon[i](0), axon[28](1)
  for i = 31, 32 connect axon[i](0), axon[i-1](1)
  connect axon[33](0), axon[31](1)
  for i = 34, 35 connect axon[i](0), axon[33](1)
  connect axon[36](0), axon[30](1)
  for i = 37, 38 connect axon[i](0), axon[36](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-11.355, 0, 0, 22.71)
	pt3dadd(0, 0, 0, 22.71)
	pt3dadd(11.355, 0, 0, 22.71)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(4.89, 13.84, 2, 4.5)
	pt3dadd(4.67, 18.64, 3.19, 3.1)
	pt3dadd(6.21, 27.27, 5.18, 2.1)
	pt3dadd(6.86, 34.92, 7.65, 1.8)
	pt3dadd(6.22, 46.1, 7.63, 1.8)
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  }
}
proc shape3d_2() {
  apic[17] {	pt3dadd(69.47, 206.28, -16.51, 0.3)
	pt3dadd(72.77, 216.02, -17.37, 0.3)
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  }
}
proc shape3d_3() {
  apic[30] {  }
  apic[31] {pt3dclear()
	pt3dadd(-5.11, 200.28, -6.35, 0.4)
	pt3dadd(-8.86, 210.06, -9.96, 0.3)
	pt3dadd(-11.32, 219.07, -12.72, 0.3)
	pt3dadd(-13.34, 225.82, -14.07, 0.3)
	pt3dadd(-15.17, 231.68, -14.76, 0.3)
	pt3dadd(-18.98, 238.52, -15.08, 0.3)
	pt3dadd(-21.5, 247.81, -16.29, 0.3)
	pt3dadd(-23.4, 253.97, -15.43, 0.3)
	pt3dadd(-27.17, 261.68, -13.82, 0.3)
	pt3dadd(-29.41, 267.93, -12.35, 0.3)
	pt3dadd(-29.6, 272.24, -11.07, 0.3)
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  }
}
proc shape3d_4() {
  apic[50] {	pt3dadd(-70.07, 148.52, 22.74, 0.6)
	pt3dadd(-71.68, 154.2, 20.97, 0.6)
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  }
}
proc shape3d_5() {
  dend[5] {	pt3dadd(49.96, -97.13, -4.39, 0.3)
	pt3dadd(51.84, -106.03, -3.61, 0.3)
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  }
}
proc shape3d_6() {
  dend[21] {	pt3dadd(-20.01, -71.91, 10.12, 0.3)
	pt3dadd(-27.73, -82.28, 11.87, 0.3)
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  }
}
proc shape3d_7() {
  dend[43] {	pt3dadd(37.12, -152.85, -84.08, 0.4)
	pt3dadd(41.9, -158.29, -87.52, 0.4)
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  }
}
proc shape3d_8() {
  dend[59] {	pt3dadd(-61, -98.35, -82.91, 0.3)
	pt3dadd(-61.15, -103.24, -87.15, 0.3)
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  }
}
proc shape3d_9() {
  axon[6] {  }
  axon[7] {pt3dclear()
	pt3dadd(122.04, -37.42, -90.85, 0.7)
	pt3dadd(128.92, -39.13, -88.77, 0.3)
	pt3dadd(134.66, -41.14, -85.24, 0.3)
	pt3dadd(140.74, -41.88, -80.48, 0.3)
	pt3dadd(145.01, -43.42, -76.62, 0.3)
	pt3dadd(151.24, -44.07, -71.38, 0.3)
	pt3dadd(156.74, -44.03, -65.03, 0.3)
	pt3dadd(161.94, -42.33, -57.86, 0.3)
	pt3dadd(164.62, -39.38, -53.95, 0.3)
  }
  axon[8] {pt3dclear()
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  }
}
proc shape3d_10() {
  axon[13] {	pt3dadd(-69.95, 291.87, 111.75, 0.3)
	pt3dadd(-74.46, 294.1, 108.88, 0.3)
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  }
}
proc shape3d_11() {
  axon[22] {	pt3dadd(106.47, 248.43, -196.91, 0.5)
	pt3dadd(108.5, 249.73, -198.83, 0.5)
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  }
}
proc shape3d_12() {
  axon[26] {	pt3dadd(144.28, 266.49, -15.19, 0.3)
	pt3dadd(142.28, 264.7, -13.18, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 61 apic[i] all.append()
    for i=0, 63 dend[i] all.append()
    for i=0, 38 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 38 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 63 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 61 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 61

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







