// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[93], dend[95], axon[45]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  connect apic[11](0), apic[7](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  connect apic[15](0), apic[11](1)
  for i = 16, 17 connect apic[i](0), apic[15](1)
  connect apic[18](0), apic[6](1)
  connect apic[19](0), apic[5](1)
  connect apic[20](0), apic[4](1)
  for i = 21, 25 connect apic[i](0), apic[i-1](1)
  connect apic[26](0), apic[24](1)
  connect apic[27](0), apic[23](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  connect apic[30](0), apic[22](1)
  connect apic[31](0), apic[21](1)
  connect apic[32](0), apic[20](1)
  connect apic[33](0), apic[3](1)
  for i = 34, 35 connect apic[i](0), apic[33](1)
  connect apic[36](0), apic[2](1)
  connect apic[37](0), apic[1](1)
  for i = 38, 46 connect apic[i](0), apic[i-1](1)
  connect apic[47](0), apic[45](1)
  connect apic[48](0), apic[44](1)
  connect apic[49](0), apic[43](1)
  connect apic[50](0), apic[42](1)
  connect apic[51](0), apic[41](1)
  for i = 52, 53 connect apic[i](0), apic[51](1)
  connect apic[54](0), apic[40](1)
  for i = 55, 56 connect apic[i](0), apic[54](1)
  connect apic[57](0), apic[39](1)
  connect apic[58](0), apic[38](1)
  connect apic[59](0), apic[37](1)
  for i = 60, 61 connect apic[i](0), apic[59](1)
  connect apic[62](0), apic(1)
  for i = 63, 71 connect apic[i](0), apic[i-1](1)
  connect apic[72](0), apic[70](1)
  connect apic[73](0), apic[69](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  connect apic[76](0), apic[68](1)
  connect apic[77](0), apic[67](1)
  connect apic[78](0), apic[66](1)
  connect apic[79](0), apic[65](1)
  connect apic[80](0), apic[64](1)
  for i = 81, 82 connect apic[i](0), apic[80](1)
  connect apic[83](0), apic[63](1)
  for i = 84, 85 connect apic[i](0), apic[i-1](1)
  connect apic[86](0), apic[84](1)
  connect apic[87](0), apic[83](1)
  connect apic[88](0), apic[62](1)
  for i = 89, 90 connect apic[i](0), apic[i-1](1)
  connect apic[91](0), apic[89](1)
  connect apic[92](0), apic[88](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[2](1)
  connect dend[5](0), soma(0.5)
  for i = 6, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  connect dend[14](0), dend[10](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), dend[9](1)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  connect dend[20](0), dend[8](1)
  for i = 21, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), dend[20](1)
  connect dend[27](0), dend[7](1)
  for i = 28, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  connect dend[35](0), dend[27](1)
  connect dend[36](0), dend[6](1)
  for i = 37, 38 connect dend[i](0), dend[i-1](1)
  connect dend[39](0), dend[37](1)
  connect dend[40](0), dend[36](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  connect dend[43](0), dend[5](1)
  for i = 44, 46 connect dend[i](0), dend[i-1](1)
  connect dend[47](0), dend[45](1)
  connect dend[48](0), dend[44](1)
  connect dend[49](0), dend[43](1)
  connect dend[50](0), soma(0.5)
  for i = 51, 52 connect dend[i](0), dend[i-1](1)
  connect dend[53](0), dend[51](1)
  connect dend[54](0), dend[50](1)
  connect dend[55](0), soma(0.5)
  for i = 56, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  connect dend[63](0), dend[57](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  connect dend[66](0), dend[56](1)
  for i = 67, 69 connect dend[i](0), dend[i-1](1)
  connect dend[70](0), dend[68](1)
  connect dend[71](0), dend[67](1)
  connect dend[72](0), dend[66](1)
  for i = 73, 74 connect dend[i](0), dend[72](1)
  connect dend[75](0), dend[55](1)
  connect dend[76](0), soma(0.5)
  for i = 77, 82 connect dend[i](0), dend[i-1](1)
  connect dend[83](0), dend[81](1)
  connect dend[84](0), dend[80](1)
  connect dend[85](0), dend[79](1)
  connect dend[86](0), dend[78](1)
  connect dend[87](0), dend[77](1)
  for i = 88, 89 connect dend[i](0), dend[i-1](1)
  connect dend[90](0), dend[88](1)
  connect dend[91](0), dend[87](1)
  connect dend[92](0), dend[76](1)
  for i = 93, 94 connect dend[i](0), dend[92](1)
  connect axon(0), soma(0.5)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  connect axon[10](0), axon[1](1)
  for i = 11, 13 connect axon[i](0), axon[i-1](1)
  connect axon[14](0), axon[12](1)
  connect axon[15](0), axon[11](1)
  connect axon[16](0), axon[10](1)
  connect axon[17](0), axon(1)
  for i = 18, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  connect axon[21](0), axon[17](1)
  for i = 22, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  connect axon[28](0), axon[22](1)
  connect axon[29](0), axon[21](1)
  for i = 30, 32 connect axon[i](0), axon[i-1](1)
  connect axon[33](0), axon[31](1)
  connect axon[34](0), axon[30](1)
  connect axon[35](0), axon[29](1)
  for i = 36, 37 connect axon[i](0), axon[i-1](1)
  connect axon[38](0), axon[36](1)
  for i = 39, 40 connect axon[i](0), axon[i-1](1)
  connect axon[41](0), axon[39](1)
  connect axon[42](0), axon[38](1)
  connect axon[43](0), axon[35](1)
  connect axon[44](0), axon[2](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-14.106, 0, 0, 28.212)
	pt3dadd(0, 0, 0, 28.212)
	pt3dadd(14.106, 0, 0, 28.212)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(0.67, 16.11, -0.51, 7.6)
	pt3dadd(-1.46, 26.87, -1.47, 5.8)
	pt3dadd(-5.11, 33.32, -2.01, 5.1)
	pt3dadd(-5.45, 39.92, -1.06, 4.5)
	pt3dadd(-6.88, 47.87, 0.35, 4.5)
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  }
}
proc shape3d_2() {
  apic[19] {	pt3dadd(-8.84, 267.36, -34.22, 0.7)
	pt3dadd(-10.64, 278.67, -35.46, 0.7)
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  }
}
proc shape3d_3() {
  apic[36] {	pt3dadd(-51.01, 159.59, -62.1, 0.3)
	pt3dadd(-59.39, 162.65, -63.37, 0.3)
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  }
}
proc shape3d_4() {
  apic[56] {	pt3dadd(57.43, 222.81, 128.39, 0.3)
	pt3dadd(55.57, 226.44, 136.64, 0.3)
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  }
}
proc shape3d_5() {
  apic[76] {	pt3dadd(-129.58, 269, -8.06, 0.3)
	pt3dadd(-135.44, 271.44, -10.18, 0.3)
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  }
}
proc shape3d_6() {
  dend[3] {	pt3dadd(-62.62, -85.74, -133.99, 0.3)
  }
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  }
}
proc shape3d_7() {
  dend[33] {	pt3dadd(-64.81, -69.82, -70.72, 0.3)
	pt3dadd(-67.08, -69.51, -77.07, 0.3)
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  }
}
proc shape3d_8() {
  dend[54] {	pt3dadd(-115.96, -92.35, 24.23, 0.6)
	pt3dadd(-121.72, -98.53, 22.2, 0.3)
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  }
}
proc shape3d_9() {
  dend[74] {	pt3dadd(26.72, -65.81, -85.25, 0.3)
	pt3dadd(21.53, -80.01, -97.61, 0.3)
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  }
}
proc shape3d_10() {
  dend[93] {	pt3dadd(28.04, -29.05, 38.22, 0.3)
	pt3dadd(32.48, -30.12, 42.17, 0.3)
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  }
}
proc shape3d_11() {
  axon[7] {	pt3dadd(-271.85, 492.68, -414.38, 0.3)
	pt3dadd(-272.36, 495.63, -414.53, 0.3)
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  }
}
proc shape3d_12() {
  axon[12] {	pt3dadd(78.24, 343.47, 402.46, 0.3)
	pt3dadd(80.05, 350.1, 406.82, 0.3)
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  }
}
proc shape3d_13() {
  axon[16] {	pt3dadd(203.09, 276.84, 289.92, 0.3)
	pt3dadd(207.89, 285.77, 289.16, 0.3)
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  }
}
proc shape3d_14() {
  axon[27] {	pt3dadd(22.97, 117.14, 64.16, 0.3)
	pt3dadd(14.26, 117.5, 71.19, 0.3)
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  }
}
proc shape3d_15() {
  axon[38] {	pt3dadd(-29.32, -57.42, 150.29, 0.3)
	pt3dadd(-30.62, -48.87, 163.35, 0.3)
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  }
}
proc shape3d_16() {
  axon[44] {	pt3dadd(-323.6, 272.69, -573.24, 0.3)
	pt3dadd(-328.38, 276.29, -576.21, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 92 apic[i] all.append()
    for i=0, 94 dend[i] all.append()
    for i=0, 44 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 44 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 94 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 92 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 92

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







