// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[101], dend[79], axon[61]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 11 connect apic[i](0), apic[i-1](1)
  connect apic[12](0), apic[10](1)
  connect apic[13](0), apic[9](1)
  connect apic[14](0), apic[8](1)
  connect apic[15](0), apic[7](1)
  for i = 16, 17 connect apic[i](0), apic[15](1)
  connect apic[18](0), apic[6](1)
  connect apic[19](0), apic[5](1)
  for i = 20, 21 connect apic[i](0), apic[19](1)
  connect apic[22](0), apic[4](1)
  connect apic[23](0), apic[3](1)
  connect apic[24](0), apic[2](1)
  connect apic[25](0), apic[1](1)
  for i = 26, 27 connect apic[i](0), apic[25](1)
  connect apic[28](0), apic(1)
  for i = 29, 37 connect apic[i](0), apic[i-1](1)
  connect apic[38](0), apic[36](1)
  connect apic[39](0), apic[35](1)
  for i = 40, 41 connect apic[i](0), apic[39](1)
  connect apic[42](0), apic[34](1)
  connect apic[43](0), apic[33](1)
  connect apic[44](0), apic[32](1)
  connect apic[45](0), apic[31](1)
  for i = 46, 47 connect apic[i](0), apic[45](1)
  connect apic[48](0), apic[30](1)
  connect apic[49](0), apic[29](1)
  for i = 50, 54 connect apic[i](0), apic[i-1](1)
  connect apic[55](0), apic[53](1)
  connect apic[56](0), apic[52](1)
  for i = 57, 58 connect apic[i](0), apic[56](1)
  connect apic[59](0), apic[51](1)
  connect apic[60](0), apic[50](1)
  connect apic[61](0), apic[49](1)
  connect apic[62](0), apic[28](1)
  for i = 63, 69 connect apic[i](0), apic[i-1](1)
  connect apic[70](0), apic[68](1)
  connect apic[71](0), apic[67](1)
  connect apic[72](0), apic[66](1)
  connect apic[73](0), apic[65](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  connect apic[76](0), apic[64](1)
  connect apic[77](0), apic[63](1)
  connect apic[78](0), apic[62](1)
  for i = 79, 82 connect apic[i](0), apic[i-1](1)
  connect apic[83](0), apic[81](1)
  connect apic[84](0), apic[80](1)
  connect apic[85](0), apic[79](1)
  connect apic[86](0), apic[78](1)
  connect apic[87](0), soma(0.5)
  for i = 88, 89 connect apic[i](0), apic[i-1](1)
  connect apic[90](0), apic[88](1)
  connect apic[91](0), apic[87](1)
  connect apic[92](0), soma(0.5)
  for i = 93, 95 connect apic[i](0), apic[i-1](1)
  connect apic[96](0), apic[94](1)
  for i = 97, 98 connect apic[i](0), apic[96](1)
  connect apic[99](0), apic[93](1)
  connect apic[100](0), apic[92](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  connect dend[7](0), soma(0.5)
  for i = 8, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), dend[9](1)
  connect dend[20](0), dend[8](1)
  for i = 21, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  connect dend[24](0), dend[20](1)
  connect dend[25](0), dend[7](1)
  for i = 26, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  connect dend[33](0), dend[27](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), dend[26](1)
  for i = 37, 38 connect dend[i](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[25](1)
  for i = 42, 43 connect dend[i](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  connect dend[46](0), soma(0.5)
  for i = 47, 50 connect dend[i](0), dend[i-1](1)
  connect dend[51](0), dend[49](1)
  connect dend[52](0), dend[48](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  connect dend[55](0), dend[47](1)
  connect dend[56](0), dend[46](1)
  for i = 57, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  connect dend[62](0), dend[56](1)
  connect dend[63](0), soma(0.5)
  for i = 64, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  connect dend[67](0), dend[63](1)
  connect dend[68](0), soma(0.5)
  for i = 69, 70 connect dend[i](0), dend[i-1](1)
  connect dend[71](0), dend[69](1)
  for i = 72, 73 connect dend[i](0), dend[71](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), dend[68](1)
  for i = 77, 78 connect dend[i](0), dend[76](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  connect axon[4](0), axon(1)
  for i = 5, 6 connect axon[i](0), axon[i-1](1)
  connect axon[7](0), axon[5](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  connect axon[10](0), axon[4](1)
  for i = 11, 16 connect axon[i](0), axon[i-1](1)
  connect axon[17](0), axon[15](1)
  connect axon[18](0), axon[14](1)
  connect axon[19](0), axon[13](1)
  for i = 20, 21 connect axon[i](0), axon[19](1)
  connect axon[22](0), axon[12](1)
  for i = 23, 25 connect axon[i](0), axon[i-1](1)
  connect axon[26](0), axon[24](1)
  for i = 27, 28 connect axon[i](0), axon[26](1)
  connect axon[29](0), axon[23](1)
  connect axon[30](0), axon[22](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  connect axon[33](0), axon[11](1)
  connect axon[34](0), axon[10](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[37](1)
  connect axon[40](0), axon[34](1)
  for i = 41, 44 connect axon[i](0), axon[i-1](1)
  connect axon[45](0), axon[43](1)
  connect axon[46](0), axon[41](1)
  for i = 47, 48 connect axon[i](0), axon[46](1)
  connect axon[49](0), axon[40](1)
  for i = 50, 51 connect axon[i](0), axon[i-1](1)
  connect axon[52](0), axon[50](1)
  for i = 53, 54 connect axon[i](0), axon[i-1](1)
  connect axon[55](0), axon[53](1)
  connect axon[56](0), axon[52](1)
  connect axon[57](0), axon[49](1)
  connect axon[58](0), axon[42](1)
  for i = 59, 60 connect axon[i](0), axon[58](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-18.031, 0, 0, 36.062)
	pt3dadd(0, 0, 0, 36.062)
	pt3dadd(18.031, 0, 0, 36.062)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-7.9, 19.66, -4.09, 5.7)
	pt3dadd(-8.66, 26.65, -5.57, 3.6)
  }
  apic[1] {pt3dclear()
	pt3dadd(-8.66, 26.65, -5.57, 3.6)
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  }
}
proc shape3d_2() {
  apic[20] {	pt3dadd(-133.79, 398.73, 10.19, 0.3)
	pt3dadd(-141.27, 401.26, 12.99, 0.3)
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  }
}
proc shape3d_3() {
  apic[41] {	pt3dadd(27.68, 507.01, -88.64, 0.3)
	pt3dadd(24.56, 515.83, -87.82, 0.3)
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  }
}
proc shape3d_4() {
  apic[61] {	pt3dadd(21.28, 152.68, -108.55, 0.3)
	pt3dadd(26.45, 159.04, -113.45, 0.3)
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  }
}
proc shape3d_5() {
  apic[81] {	pt3dadd(-138.58, 594.34, -44.46, 0.3)
	pt3dadd(-138.2, 610.37, -42.65, 0.3)
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  }
}
proc shape3d_6() {
  dend {	pt3dadd(6.04, -25.87, -25.51, 2.1)
	pt3dadd(7.12, -28.77, -29.47, 1.2)
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  }
}
proc shape3d_7() {
  dend[22] {	pt3dadd(47.65, -111.79, 49.25, 0.4)
	pt3dadd(45.55, -124.47, 52.35, 0.4)
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  }
}
proc shape3d_8() {
  dend[40] {	pt3dadd(191.9, -223.33, -60.41, 0.3)
  }
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  }
}
proc shape3d_9() {
  dend[63] {	pt3dadd(19.33, -20.76, -5.97, 1.7)
	pt3dadd(34.61, -33.88, -5.12, 1.6)
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  }
}
proc shape3d_10() {
  axon[1] {	pt3dadd(-103.44, 53.26, 24.35, 0.3)
	pt3dadd(-109.41, 61.43, 23.87, 0.3)
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  }
}
proc shape3d_11() {
  axon[3] {	pt3dadd(-490.48, 188.9, 33.63, 0.3)
	pt3dadd(-496.3, 191.04, 35.08, 0.3)
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  }
}
proc shape3d_12() {
  axon[18] {	pt3dadd(-233.8, -105.99, -105.15, 0.3)
	pt3dadd(-238.07, -105.21, -108.09, 0.3)
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  }
}
proc shape3d_13() {
  axon[25] {	pt3dadd(488.56, 645.35, 94.49, 0.3)
	pt3dadd(491.65, 654.56, 93.44, 0.3)
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  }
}
proc shape3d_14() {
  axon[28] {  }
  axon[29] {pt3dclear()
	pt3dadd(198.1, 171.29, 36.02, 0.3)
	pt3dadd(203.7, 172.64, 34.6, 0.3)
	pt3dadd(211.52, 174.65, 30.91, 0.3)
	pt3dadd(215.24, 173.38, 29.77, 0.3)
	pt3dadd(220.3, 173.69, 29.28, 0.3)
	pt3dadd(223, 172.86, 28.04, 0.3)
	pt3dadd(226.11, 172.55, 27.35, 0.3)
	pt3dadd(228.71, 174.22, 25.63, 0.3)
	pt3dadd(232.45, 175.98, 22.52, 0.3)
	pt3dadd(237.48, 176.33, 17.51, 0.3)
	pt3dadd(245.68, 179.35, 14.38, 0.3)
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  }
}
proc shape3d_15() {
  axon[35] {	pt3dadd(16.64, -166.56, -19.14, 0.3)
	pt3dadd(16.31, -167.11, -15.66, 0.3)
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  }
}
proc shape3d_16() {
  axon[48] {	pt3dadd(-115.14, -183.33, -79.16, 0.3)
	pt3dadd(-120.08, -186.64, -78.21, 0.3)
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  }
}
proc shape3d_17() {
  axon[60] {	pt3dadd(225.26, 317.98, -95.56, 0.3)
	pt3dadd(226.2, 319.04, -95.45, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 100 apic[i] all.append()
    for i=0, 78 dend[i] all.append()
    for i=0, 60 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 60 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 78 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 100 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 100

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







