// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[96], dend[57], axon[67]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  for i = 17, 18 connect apic[i](0), apic[16](1)
  connect apic[19](0), apic[13](1)
  for i = 20, 21 connect apic[i](0), apic[19](1)
  connect apic[22](0), apic[12](1)
  connect apic[23](0), apic[11](1)
  for i = 24, 25 connect apic[i](0), apic[23](1)
  connect apic[26](0), apic[10](1)
  connect apic[27](0), apic[9](1)
  connect apic[28](0), apic[8](1)
  connect apic[29](0), apic[7](1)
  for i = 30, 31 connect apic[i](0), apic[29](1)
  connect apic[32](0), apic[6](1)
  for i = 33, 34 connect apic[i](0), apic[i-1](1)
  connect apic[35](0), apic[33](1)
  connect apic[36](0), apic[32](1)
  connect apic[37](0), apic[5](1)
  connect apic[38](0), apic[4](1)
  connect apic[39](0), apic[3](1)
  connect apic[40](0), apic[2](1)
  connect apic[41](0), apic[1](1)
  connect apic[42](0), apic(1)
  connect apic[43](0), soma(0.5)
  for i = 44, 56 connect apic[i](0), apic[i-1](1)
  connect apic[57](0), apic[55](1)
  connect apic[58](0), apic[54](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  connect apic[61](0), apic[53](1)
  for i = 62, 63 connect apic[i](0), apic[61](1)
  for i = 64, 65 connect apic[i](0), apic[i-1](1)
  connect apic[66](0), apic[64](1)
  connect apic[67](0), apic[63](1)
  connect apic[68](0), apic[52](1)
  connect apic[69](0), apic[51](1)
  connect apic[70](0), apic[50](1)
  connect apic[71](0), apic[49](1)
  connect apic[72](0), apic[48](1)
  connect apic[73](0), apic[47](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  connect apic[78](0), apic[46](1)
  connect apic[79](0), apic[45](1)
  connect apic[80](0), apic[44](1)
  for i = 81, 82 connect apic[i](0), apic[80](1)
  connect apic[83](0), apic[43](1)
  for i = 84, 85 connect apic[i](0), apic[i-1](1)
  connect apic[86](0), apic[84](1)
  for i = 87, 88 connect apic[i](0), apic[i-1](1)
  connect apic[89](0), apic[87](1)
  connect apic[90](0), apic[86](1)
  connect apic[91](0), apic[83](1)
  for i = 92, 93 connect apic[i](0), apic[i-1](1)
  connect apic[94](0), apic[92](1)
  connect apic[95](0), apic[91](1)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend[7](1)
  connect dend[10](0), dend[6](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), dend[1](1)
  connect dend[14](0), dend(1)
  for i = 15, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), dend[15](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), dend[14](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  connect dend[31](0), soma(0.5)
  for i = 32, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  connect dend[35](0), dend[31](1)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  connect dend[38](0), soma(0.5)
  for i = 39, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  connect dend[44](0), dend[40](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  connect dend[47](0), dend[39](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  connect dend[54](0), dend[38](1)
  for i = 55, 56 connect dend[i](0), dend[54](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  for i = 4, 5 connect axon[i](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  connect axon[8](0), axon(1)
  for i = 9, 11 connect axon[i](0), axon[i-1](1)
  connect axon[12](0), axon[10](1)
  for i = 13, 14 connect axon[i](0), axon[i-1](1)
  connect axon[15](0), axon[13](1)
  connect axon[16](0), axon[12](1)
  for i = 17, 18 connect axon[i](0), axon[16](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  connect axon[21](0), axon[9](1)
  for i = 22, 23 connect axon[i](0), axon[i-1](1)
  connect axon[24](0), axon[22](1)
  for i = 25, 26 connect axon[i](0), axon[24](1)
  connect axon[27](0), axon[21](1)
  for i = 28, 30 connect axon[i](0), axon[i-1](1)
  connect axon[31](0), axon[29](1)
  connect axon[32](0), axon[28](1)
  for i = 33, 34 connect axon[i](0), axon[i-1](1)
  connect axon[35](0), axon[33](1)
  for i = 36, 37 connect axon[i](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[37](1)
  connect axon[40](0), axon[32](1)
  for i = 41, 42 connect axon[i](0), axon[40](1)
  for i = 43, 44 connect axon[i](0), axon[42](1)
  connect axon[45](0), axon[27](1)
  connect axon[46](0), axon[8](1)
  for i = 47, 49 connect axon[i](0), axon[i-1](1)
  connect axon[50](0), axon[48](1)
  for i = 51, 52 connect axon[i](0), axon[50](1)
  for i = 53, 54 connect axon[i](0), axon[i-1](1)
  connect axon[55](0), axon[53](1)
  for i = 56, 57 connect axon[i](0), axon[55](1)
  connect axon[58](0), axon[52](1)
  for i = 59, 60 connect axon[i](0), axon[58](1)
  for i = 61, 62 connect axon[i](0), axon[60](1)
  connect axon[63](0), axon[47](1)
  for i = 64, 65 connect axon[i](0), axon[63](1)
  connect axon[66](0), axon[46](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-11.67, 0, 0, 23.34)
	pt3dadd(0, 0, 0, 23.34)
	pt3dadd(11.67, 0, 0, 23.34)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(8.4, 5.43, -2.81, 2.7)
	pt3dadd(14.2, 10.49, -4.04, 2)
	pt3dadd(19.86, 15.11, -4.24, 2)
	pt3dadd(29.3, 28.16, -7.93, 2)
  }
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  }
}
proc shape3d_2() {
  apic[22] {	pt3dadd(72.34, 815.24, 30.76, 0.3)
	pt3dadd(77.03, 814.14, 28.46, 0.3)
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  }
}
proc shape3d_3() {
  apic[38] {	pt3dadd(-20.29, 214.36, -39.35, 0.3)
	pt3dadd(-22.2, 224.31, -43.41, 0.3)
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  }
}
proc shape3d_4() {
  apic[57] {	pt3dadd(-44.6, 654.65, -58.67, 0.3)
	pt3dadd(-46.85, 655.57, -63.48, 0.3)
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  }
}
proc shape3d_5() {
  apic[69] {	pt3dadd(-49.19, 435.68, 22.1, 0.3)
	pt3dadd(-46.87, 444.79, 23.38, 0.3)
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  }
}
proc shape3d_6() {
  apic[81] {	pt3dadd(-132.4, 205.79, -24.52, 0.3)
	pt3dadd(-132.01, 213.68, -24.75, 0.3)
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  }
}
proc shape3d_7() {
  dend[4] {	pt3dadd(59.55, -61.13, 1.06, 0.3)
	pt3dadd(65.43, -62.44, -1.41, 0.3)
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  }
}
proc shape3d_8() {
  dend[20] {  }
  dend[21] {pt3dclear()
	pt3dadd(89.11, -129.21, 19.34, 0.3)
	pt3dadd(93.31, -134.08, 17.06, 0.3)
	pt3dadd(99.89, -139.39, 14.42, 0.3)
	pt3dadd(107.8, -143.15, 13.12, 0.3)
	pt3dadd(113.39, -148.52, 12.28, 0.3)
	pt3dadd(119.6, -150.59, 11.48, 0.3)
	pt3dadd(125.47, -153.29, 10.6, 0.3)
	pt3dadd(132.67, -156.68, 9.61, 0.3)
	pt3dadd(140.59, -159.98, 7.76, 0.3)
	pt3dadd(146.65, -163.83, 5.44, 0.3)
	pt3dadd(151.98, -167.78, 3.95, 0.3)
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  }
}
proc shape3d_9() {
  dend[34] {	pt3dadd(174.28, -159.59, -8.44, 0.3)
  }
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  }
}
proc shape3d_10() {
  dend[50] {	pt3dadd(-69.57, -230.59, -6.75, 0.3)
	pt3dadd(-73.2, -237.16, -10.06, 0.3)
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  }
}
proc shape3d_11() {
  axon[5] {	pt3dadd(-50.75, 164.68, -51.26, 0.3)
	pt3dadd(-53.63, 177.3, -52.59, 0.3)
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  }
}
proc shape3d_12() {
  axon[10] {	pt3dadd(70.26, -149.68, 7.79, 0.3)
	pt3dadd(73.31, -150.26, 9.17, 0.3)
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  }
}
proc shape3d_13() {
  axon[20] {	pt3dadd(569.86, -61.77, 27.1, 0.3)
	pt3dadd(573.12, -59.88, 26.87, 0.3)
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  }
}
proc shape3d_14() {
  axon[32] {  }
  axon[33] {pt3dclear()
	pt3dadd(-77.48, -158.31, -61.31, 0.3)
	pt3dadd(-78.2, -156.57, -62.62, 0.3)
	pt3dadd(-78.1, -153.2, -60.66, 0.3)
	pt3dadd(-76.62, -149.86, -57.8, 0.3)
	pt3dadd(-74.61, -147.52, -55.8, 0.3)
	pt3dadd(-73.4, -145.03, -55.05, 0.3)
	pt3dadd(-71.78, -141.25, -53.22, 0.3)
	pt3dadd(-71.16, -138.88, -52.11, 0.3)
	pt3dadd(-70.16, -137.48, -51.38, 0.3)
	pt3dadd(-70.19, -132.7, -50.55, 0.3)
	pt3dadd(-68.91, -130.46, -47.71, 0.3)
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  }
}
proc shape3d_15() {
  axon[45] {	pt3dadd(-121.51, -252.95, -52.17, 0.3)
	pt3dadd(-121.73, -254.47, -55.8, 0.3)
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  }
}
proc shape3d_16() {
  axon[63] {	pt3dadd(233.48, -175.96, 41.13, 0.3)
	pt3dadd(240.52, -173.68, 44.52, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 95 apic[i] all.append()
    for i=0, 56 dend[i] all.append()
    for i=0, 66 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 66 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 56 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 95 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 95

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







