// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[13], apic[81], dend[52]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  connect axon[4](0), axon(1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  for i = 7, 8 connect axon[i](0), axon[6](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  for i = 11, 12 connect axon[i](0), axon[10](1)
  connect apic(0), soma(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[3](1)
  connect apic[6](0), apic[2](1)
  for i = 7, 8 connect apic[i](0), apic[i-1](1)
  connect apic[9](0), apic[7](1)
  connect apic[10](0), apic[6](1)
  for i = 11, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  for i = 15, 17 connect apic[i](0), apic[i-1](1)
  connect apic[18](0), apic[16](1)
  connect apic[19](0), apic[15](1)
  connect apic[20](0), apic[14](1)
  connect apic[21](0), apic[11](1)
  connect apic[22](0), apic[10](1)
  connect apic[23](0), apic[1](1)
  for i = 24, 27 connect apic[i](0), apic[i-1](1)
  connect apic[28](0), apic[26](1)
  for i = 29, 30 connect apic[i](0), apic[28](1)
  connect apic[31](0), apic[25](1)
  connect apic[32](0), apic[24](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  connect apic[35](0), apic[23](1)
  for i = 36, 37 connect apic[i](0), apic[i-1](1)
  connect apic[38](0), apic[36](1)
  for i = 39, 40 connect apic[i](0), apic[38](1)
  connect apic[41](0), apic[35](1)
  for i = 42, 43 connect apic[i](0), apic[41](1)
  for i = 44, 46 connect apic[i](0), apic[i-1](1)
  connect apic[47](0), apic[45](1)
  connect apic[48](0), apic[44](1)
  connect apic[49](0), apic[43](1)
  connect apic[50](0), apic(1)
  for i = 51, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  for i = 56, 57 connect apic[i](0), apic[i-1](1)
  connect apic[58](0), apic[56](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  connect apic[61](0), apic[55](1)
  for i = 62, 63 connect apic[i](0), apic[i-1](1)
  connect apic[64](0), apic[62](1)
  connect apic[65](0), apic[61](1)
  connect apic[66](0), apic[50](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  for i = 69, 70 connect apic[i](0), apic[68](1)
  for i = 71, 72 connect apic[i](0), apic[70](1)
  for i = 73, 74 connect apic[i](0), apic[72](1)
  for i = 75, 76 connect apic[i](0), apic[i-1](1)
  connect apic[77](0), apic[75](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  connect apic[80](0), apic[74](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend[6](1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0.5)
  for i = 22, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[21](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), dend[33](1)
  connect dend[36](0), dend[32](1)
  for i = 37, 38 connect dend[i](0), dend[36](1)
  connect dend[39](0), soma(0.5)
  for i = 40, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  connect dend[43](0), dend[39](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), soma(0.5)
  for i = 50, 51 connect dend[i](0), dend[49](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-7.733, 21, 1.69, 13.206)
	pt3dadd(-1.13, 21, 1.69, 13.206)
	pt3dadd(5.473, 21, 1.69, 13.206)
  }
  axon {pt3dclear()
	pt3dstyle(1, -1.13, 21, 1.69)
	pt3dadd(0, 0, 0, 1.8)
	pt3dadd(-1.5, 0, -2, 1.8)
	pt3dadd(-2.5, -6.5, -2, 1.8)
	pt3dadd(-7.5, -10.5, 0, 1.8)
	pt3dadd(-10, -14, -7, 1.8)
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  }
}
proc shape3d_2() {
  axon[9] {	pt3dadd(346, 188.5, -218, 0.4)
	pt3dadd(347, 192, -213.5, 0.4)
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  }
}
proc shape3d_3() {
  apic[10] {	pt3dadd(-53.5, 184, 27.5, 1.3)
	pt3dadd(-54.5, 187, 28.5, 1.3)
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  }
}
proc shape3d_4() {
  apic[25] {	pt3dadd(-19, 176.5, 18, 1.3)
	pt3dadd(-20.5, 181.5, 24.5, 1.3)
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  }
}
proc shape3d_5() {
  apic[34] {	pt3dadd(0, 157.5, 72, 0.6)
	pt3dadd(3, 159.5, 75.5, 0.6)
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  }
}
proc shape3d_6() {
  apic[45] {	pt3dadd(22, 213.5, -20, 0.9)
	pt3dadd(25, 220.5, -25, 0.9)
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  }
}
proc shape3d_7() {
  apic[60] {	pt3dadd(38.5, 417.5, -72, 0.4)
	pt3dadd(37, 429, -80, 0.4)
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  }
}
proc shape3d_8() {
  apic[77] {	pt3dadd(131, 315, -59, 0.4)
	pt3dadd(135.5, 321, -63.5, 0.4)
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  }
}
proc shape3d_9() {
  dend[5] {	pt3dadd(-35, -169, 38.5, 0.4)
	pt3dadd(-33, -170.5, 38.5, 0.4)
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  }
}
proc shape3d_10() {
  dend[20] {	pt3dadd(61.5, -58, 58.5, 0.6)
	pt3dadd(64, -63, 59.5, 0.4)
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  }
}
proc shape3d_11() {
  dend[34] {	pt3dadd(-37, -52.5, 21.5, 0.8)
	pt3dadd(-40, -55, 18, 0.8)
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  }
}
proc shape3d_12() {
  dend[43] {	pt3dadd(-29.5, -39.5, -28.5, 0.8)
  }
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 12 axon[i] all.append()
    for i=0, 80 apic[i] all.append()
    for i=0, 51 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 12 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 51 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 80 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 80

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}

objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}


load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







