// ///////////////////////////////////////////////////////////////////////////////////////
//
// Arquivo com o código do Laboratório 2 da disciplina Tópicos Especiais em Psicologia Clínica 
// 
// Grupo de Neurociência Computacional 
// Julian Tejada
// UFS - 2018
///////////////////////////////////////////////////////////////////////////////////////

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[115], dend[95], axon[81]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 2 connect apic[i](0), apic(1)
  connect apic[3](0), soma(0.5)
  for i = 4, 7 connect apic[i](0), apic[i-1](1)
  connect apic[8](0), apic[6](1)
  connect apic[9](0), apic[5](1)
  connect apic[10](0), apic[4](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  connect apic[13](0), apic[3](1)
  for i = 14, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  connect apic[18](0), soma(0.5)
  for i = 19, 27 connect apic[i](0), apic[i-1](1)
  connect apic[28](0), apic[26](1)
  connect apic[29](0), apic[25](1)
  connect apic[30](0), apic[24](1)
  connect apic[31](0), apic[23](1)
  connect apic[32](0), apic[22](1)
  connect apic[33](0), apic[21](1)
  for i = 34, 35 connect apic[i](0), apic[i-1](1)
  connect apic[36](0), apic[34](1)
  connect apic[37](0), apic[33](1)
  for i = 38, 39 connect apic[i](0), apic[37](1)
  connect apic[40](0), apic[20](1)
  for i = 41, 45 connect apic[i](0), apic[i-1](1)
  connect apic[46](0), apic[44](1)
  connect apic[47](0), apic[43](1)
  for i = 48, 49 connect apic[i](0), apic[47](1)
  for i = 50, 51 connect apic[i](0), apic[49](1)
  connect apic[52](0), apic[42](1)
  connect apic[53](0), apic[41](1)
  connect apic[54](0), apic[40](1)
  connect apic[55](0), apic[19](1)
  for i = 56, 63 connect apic[i](0), apic[i-1](1)
  connect apic[64](0), apic[62](1)
  connect apic[65](0), apic[61](1)
  for i = 66, 67 connect apic[i](0), apic[i-1](1)
  connect apic[68](0), apic[66](1)
  connect apic[69](0), apic[65](1)
  connect apic[70](0), apic[60](1)
  connect apic[71](0), apic[59](1)
  connect apic[72](0), apic[58](1)
  for i = 73, 74 connect apic[i](0), apic[72](1)
  connect apic[75](0), apic[57](1)
  connect apic[76](0), apic[56](1)
  connect apic[77](0), apic[55](1)
  for i = 78, 87 connect apic[i](0), apic[i-1](1)
  connect apic[88](0), apic[86](1)
  connect apic[89](0), apic[85](1)
  connect apic[90](0), apic[84](1)
  connect apic[91](0), apic[83](1)
  connect apic[92](0), apic[82](1)
  connect apic[93](0), apic[81](1)
  connect apic[94](0), apic[80](1)
  for i = 95, 96 connect apic[i](0), apic[94](1)
  connect apic[97](0), apic[79](1)
  for i = 98, 101 connect apic[i](0), apic[i-1](1)
  connect apic[102](0), apic[100](1)
  connect apic[103](0), apic[99](1)
  for i = 104, 105 connect apic[i](0), apic[103](1)
  connect apic[106](0), apic[98](1)
  connect apic[107](0), apic[97](1)
  for i = 108, 109 connect apic[i](0), apic[107](1)
  connect apic[110](0), apic[78](1)
  connect apic[111](0), apic[77](1)
  connect apic[112](0), apic[18](1)
  for i = 113, 114 connect apic[i](0), apic[112](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  connect dend[10](0), dend(1)
  for i = 11, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), dend[17](1)
  connect dend[24](0), soma(0.5)
  for i = 25, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect dend[33](0), dend[25](1)
  for i = 34, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  connect dend[40](0), dend[34](1)
  connect dend[41](0), dend[33](1)
  connect dend[42](0), dend[24](1)
  for i = 43, 44 connect dend[i](0), dend[i-1](1)
  connect dend[45](0), dend[43](1)
  connect dend[46](0), dend[42](1)
  for i = 47, 48 connect dend[i](0), dend[i-1](1)
  connect dend[49](0), dend[47](1)
  connect dend[50](0), dend[46](1)
  connect dend[51](0), soma(0.5)
  for i = 52, 54 connect dend[i](0), dend[i-1](1)
  connect dend[55](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), dend[55](1)
  connect dend[58](0), dend[52](1)
  for i = 59, 60 connect dend[i](0), dend[58](1)
  connect dend[61](0), dend[51](1)
  for i = 62, 63 connect dend[i](0), dend[i-1](1)
  connect dend[64](0), dend[62](1)
  connect dend[65](0), dend[61](1)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  connect dend[68](0), soma(0.5)
  for i = 69, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  connect dend[74](0), dend[70](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), dend[69](1)
  for i = 78, 79 connect dend[i](0), dend[77](1)
  connect dend[80](0), dend[68](1)
  for i = 81, 82 connect dend[i](0), dend[i-1](1)
  connect dend[83](0), dend[81](1)
  connect dend[84](0), dend[80](1)
  for i = 85, 86 connect dend[i](0), dend[84](1)
  connect dend[87](0), soma(0.5)
  for i = 88, 89 connect dend[i](0), dend[87](1)
  for i = 90, 91 connect dend[i](0), dend[89](1)
  connect dend[92](0), soma(0.5)
  for i = 93, 94 connect dend[i](0), dend[92](1)
  connect axon(0), soma(0.5)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  for i = 8, 9 connect axon[i](0), axon[7](1)
  for i = 10, 11 connect axon[i](0), axon[9](1)
  for i = 12, 13 connect axon[i](0), axon[11](1)
  connect axon[14](0), axon[2](1)
  for i = 15, 16 connect axon[i](0), axon[i-1](1)
  connect axon[17](0), axon[15](1)
  connect axon[18](0), axon[14](1)
  for i = 19, 22 connect axon[i](0), axon[i-1](1)
  connect axon[23](0), axon[21](1)
  for i = 24, 25 connect axon[i](0), axon[23](1)
  connect axon[26](0), axon[20](1)
  for i = 27, 28 connect axon[i](0), axon[26](1)
  for i = 29, 30 connect axon[i](0), axon[28](1)
  for i = 31, 32 connect axon[i](0), axon[i-1](1)
  connect axon[33](0), axon[31](1)
  connect axon[34](0), axon[19](1)
  connect axon[35](0), axon[30](1)
  connect axon[36](0), axon[18](1)
  for i = 37, 38 connect axon[i](0), axon[i-1](1)
  connect axon[39](0), axon[37](1)
  for i = 40, 41 connect axon[i](0), axon[39](1)
  for i = 42, 43 connect axon[i](0), axon[i-1](1)
  connect axon[44](0), axon[42](1)
  connect axon[45](0), axon[41](1)
  for i = 46, 47 connect axon[i](0), axon[i-1](1)
  connect axon[48](0), axon[46](1)
  for i = 49, 50 connect axon[i](0), axon[i-1](1)
  connect axon[51](0), axon[49](1)
  connect axon[52](0), axon[48](1)
  for i = 53, 54 connect axon[i](0), axon[52](1)
  connect axon[55](0), axon[45](1)
  for i = 56, 57 connect axon[i](0), axon[55](1)
  for i = 58, 59 connect axon[i](0), axon[57](1)
  for i = 60, 61 connect axon[i](0), axon[i-1](1)
  connect axon[62](0), axon[60](1)
  connect axon[63](0), axon[59](1)
  connect axon[64](0), axon[36](1)
  for i = 65, 66 connect axon[i](0), axon[64](1)
  for i = 67, 68 connect axon[i](0), axon[66](1)
  for i = 69, 70 connect axon[i](0), axon[68](1)
  connect axon[71](0), axon[1](1)
  for i = 72, 73 connect axon[i](0), axon[71](1)
  connect axon[74](0), axon(1)
  for i = 75, 76 connect axon[i](0), axon[i-1](1)
  connect axon[77](0), axon[75](1)
  connect axon[78](0), axon[74](1)
  for i = 79, 80 connect axon[i](0), axon[78](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-16.149, 0, 0, 32.298)
	pt3dadd(0, 0, 0, 32.298)
	pt3dadd(16.149, 0, 0, 32.298)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(4.32, 16.85, 4.56, 1.9)
	pt3dadd(5.64, 21.89, 7.89, 1.9)
	pt3dadd(5.66, 29.49, 10.11, 1.6)
	pt3dadd(4.44, 33.65, 11.44, 1.2)
	pt3dadd(2.52, 41.86, 12.61, 1)
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  }
}
proc shape3d_2() {
  apic[28] {	pt3dadd(88.25, 570.28, 67.09, 0.3)
	pt3dadd(92.87, 579.07, 69.82, 0.3)
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  }
}
proc shape3d_3() {
  apic[54] {	pt3dadd(141.46, 193.08, -42.14, 0.3)
  }
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  }
}
proc shape3d_4() {
  apic[89] {	pt3dadd(125.52, 663.72, 50.1, 0.3)
	pt3dadd(126.86, 668.7, 51.93, 0.3)
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  }
}
proc shape3d_5() {
  apic[114] {	pt3dadd(-71.72, 173.88, 28.15, 0.3)
	pt3dadd(-89.82, 187.96, 33.37, 0.3)
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  }
}
proc shape3d_6() {
  dend[24] {	pt3dadd(12.66, -14.07, -1.16, 1.4)
	pt3dadd(14.04, -16.25, -3.06, 1.4)
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  }
}
proc shape3d_7() {
  dend[50] {	pt3dadd(40.37, -85.04, 7.88, 0.3)
	pt3dadd(35.66, -101.25, 7.92, 0.3)
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  }
}
proc shape3d_8() {
  dend[73] {	pt3dadd(-109.07, -145.41, 42.58, 0.3)
	pt3dadd(-115.03, -150.89, 45.2, 0.3)
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  }
}
proc shape3d_9() {
  dend[92] {	pt3dadd(-15.01, -10.25, -7.69, 0.6)
	pt3dadd(-20.02, -18.07, -12.47, 0.6)
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  }
}
proc shape3d_10() {
  axon[9] {	pt3dadd(72.45, -172.57, 12.1, 0.3)
	pt3dadd(75.42, -172.73, 13.65, 0.3)
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  }
}
proc shape3d_11() {
  axon[16] {  }
  axon[17] {pt3dclear()
	pt3dadd(-100.84, -90.73, 31.64, 0.3)
	pt3dadd(-112.05, -92.85, 33.06, 0.3)
	pt3dadd(-120.17, -93.66, 35.48, 0.3)
	pt3dadd(-124.21, -93.83, 36.43, 0.3)
	pt3dadd(-130.18, -92.84, 37.81, 0.3)
	pt3dadd(-135.23, -92.89, 39.75, 0.3)
	pt3dadd(-137.26, -93.24, 39.73, 0.3)
	pt3dadd(-141.92, -94.85, 41.23, 0.3)
	pt3dadd(-144.42, -94.64, 41.69, 0.3)
	pt3dadd(-148.51, -95.27, 43.65, 0.3)
	pt3dadd(-153.62, -96.36, 44.62, 0.3)
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  }
}
proc shape3d_12() {
  axon[25] {	pt3dadd(-440.9, -77.7, -85.17, 0.3)
	pt3dadd(-447.46, -77.61, -82.27, 0.3)
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  }
}
proc shape3d_13() {
  axon[29] {	pt3dadd(-257.53, 396.95, 70.25, 0.3)
	pt3dadd(-254.55, 396.75, 70.8, 0.3)
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  }
}
proc shape3d_14() {
  axon[35] {	pt3dadd(-335.51, 627.47, -96.58, 0.3)
	pt3dadd(-336.45, 635.05, -96.88, 0.3)
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  }
}
proc shape3d_15() {
  axon[37] {	pt3dadd(62, 93.32, -78.55, 0.3)
	pt3dadd(62.3, 97.3, -78.69, 0.3)
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  }
}
proc shape3d_16() {
  axon[45] {	pt3dadd(229.4, 304.86, -99.64, 0.3)
	pt3dadd(232.21, 309.2, -98.76, 0.3)
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  }
}
proc shape3d_17() {
  axon[54] {	pt3dadd(664.76, 610.81, -135.54, 0.3)
	pt3dadd(667.58, 615.11, -135.66, 0.3)
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  }
}
proc shape3d_18() {
  axon[57] {	pt3dadd(328.38, 613.03, -100.79, 0.3)
	pt3dadd(329.2, 616.92, -102.42, 0.3)
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  }
}
proc shape3d_19() {
  axon[58] {	pt3dadd(879.74, 1303.8, -37.38, 0.3)
	pt3dadd(879.98, 1307.3, -36.5, 0.3)
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  }
}
proc shape3d_20() {
  axon[66] {	pt3dadd(314.72, -125.77, -26.29, 0.3)
	pt3dadd(318.01, -122, -26.38, 0.3)
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  }
}
proc shape3d_21() {
  axon[75] {	pt3dadd(119.97, -32.84, 6.04, 0.3)
	pt3dadd(134.14, -23.18, 10.88, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 114 apic[i] all.append()
    for i=0, 94 dend[i] all.append()
    for i=0, 80 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 80 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 94 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 114 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert hh
        gnabar_hh = 0.120 		// (S/cm2)
        gkbar_hh =  0.036
        gl_hh = .0003
        ena =	45.0				// (mV)
        ek =  -82.0
        el_hh = -59.0
    insert pas
      g_pas = 0.001
      e_pas = -70
    cm = 3
    Ra = 100
  }
}
access soma

dendrites = 114

objectvar stim[dendrites+1]

for i = 0, dendrites {
  apic[i] stim[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim[i].amp = 0
  stim[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim[i].del = 100
}


objectvar stim2[dendrites+1]

for i = 0, dendrites {
  apic[i] stim2[i] = new IClamp(1)  // o eletrodo foi posicionado no soma
  stim2[i].amp = 0
  stim2[i].dur = 500 // a duração da estimulação foi de 500 ms
  stim2[i].del = 100
}

load_file("Experimento.ses")
// load_file("Janela.hoc")
tstop = TempoParada
celldef()


proc Atualiza() {
    for i=0, dendrites {
        stim[i].amp = valor
    }
}







